PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', '姓名拼音': '', '男1/女2': '', '入院1/出院2': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Delay_Discounting_Task
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Routines
  Routine choice2
    TextComponent concentration2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent text_2_1
      letterHeight = 0.05
      pos = (-0.2, -0.01)
      startVal [time (s)] = 1
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      text [set every repeat]:
        即时选择的奖赏
    TextComponent text_2_2
      letterHeight = 0.05
      pos = (0.2,-0.1)
      startVal [time (s)] = 1
      text = 1000
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    TextComponent text_2_3
      letterHeight = 0.05
      pos = (0.2,0.02)
      startVal [time (s)] = 1
      text [set every repeat] = $time
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    TextComponent varable2
      letterHeight = 0.05
      pos = (-0.2, -0.1)
      startVal [time (s)] = 1
      text [set every repeat] = $x
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        x=500
        n=4
      End Routine:
        if 'left'in key_resp_3.keys:
            x-=1000/n
            n*=2
        if 'right' in key_resp_3.keys:
            x+=1000/n
            n*=2
        if loop1.finished:
            x=500
            n=4
  Routine thanks
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 测试结束，谢谢您的参与
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  Routine instruction1
    TextComponent text0_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加测试

        答案没有对错之分,希望你能仔细考虑,认真回答。

        （继续，请按空格键）
    KeyboardComponent key_resp0_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction2
    TextComponent text0_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        测试开始时,首先在屏幕中间会出现注视点“+“

        接着将成对出现两种大小不同
        并且给予时间不同的虚拟金币

        左边是立即可以得到的虚拟金币
        右边是需要等待一段时间才能得到的虚拟金币

        等待时间分一周、两周、一个月、
        六个月、一年、五年、二十五年

        （继续，请按空格键）
    KeyboardComponent key_resp0_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction3
    TextComponent text0_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果选择左侧的虚拟金币,请按键盘的左键,
        如果选择右侧的虚拟金币,请按键盘的右键。

        （继续，请按空格键）
    KeyboardComponent key_resp0_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction4
    TextComponent text0_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        在您做出选择之后，程序会反馈您的选择。
        测试结束后，这些虚拟金币最终会换成小礼物。


        （继续，请按空格键）
    KeyboardComponent key_resp_0_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine choice_week
    TextComponent concentration_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        +
    TextComponent text2_1
      letterHeight = 0.05
      startVal [time (s)] = 1
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      text:
        即时选择的奖赏         延迟一周的奖赏
    TextComponent text2_2
      letterHeight = 0.05
      pos = (-0.2,-0.1)
      startVal [time (s)] = 1
      text [set every repeat] = $x2
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    TextComponent text2_3
      letterHeight = 0.05
      pos = (0.2, -0.1)
      startVal [time (s)] = 1
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      text:
        1000
    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        x2=500
        n2=4
      End Routine:
        if 'left'in key_resp_2.keys:
            x2-=1000/n2
            n2*=2
        if 'right' in key_resp_2.keys:
            x2+=1000/n2
            n2*=2
  Routine choice_month
    TextComponent concentration3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        +
    TextComponent text3_1
      letterHeight = 0.05
      startVal [time (s)] = 1
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      text:
        即时选择的奖赏         延迟一月的奖赏
    TextComponent text3_2
      letterHeight = 0.05
      pos = (-0.2, -0.1)
      startVal [time (s)] = 1
      text [set every repeat] = $x3
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    TextComponent text3_3
      letterHeight = 0.05
      pos = (0.2, -0.1)
      startVal [time (s)] = 1
      text = 1000
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    KeyboardComponent key_resp_1month
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        x3=500
        n3=4
        z2=500
      End Routine:
        if 'left'in key_resp_1month.keys:
            z2=x3
            x3-=1000/n3
            n3*=2
            y="即时奖励"
        if 'right' in key_resp_1month.keys:
            x3+=1000/n3
            n3*=2
            z2=1000
            y="一个月后的奖励"
  Routine choice_months
    TextComponent concentration4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        +
    TextComponent text4_1
      letterHeight = 0.05
      startVal [time (s)] = 1
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      text:
        即时选择的奖赏         延迟六个月的奖赏
    TextComponent text4_2
      letterHeight = 0.05
      pos = (-0.2, -0.1)
      startVal [time (s)] = 1
      text [set every repeat] = $x4
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    TextComponent text4_3
      letterHeight = 0.05
      pos = (0.2, -0.1)
      startVal [time (s)] = 1
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      text:
        1000
    KeyboardComponent key_resp_6months
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        x4=500
        n4=4
        z3=500
      End Routine:
        if 'left'in key_resp_6months.keys:
            z3=x4
            x4-=1000/n4
            n4*=2
            y="即时奖励"
        if 'right' in key_resp_6months.keys:
            x4+=1000/n4
            n4*=2
            z3=1000
            y="六个月后的奖励"
  Routine choice_year
    TextComponent concentration5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent text5_1
      letterHeight = 0.05
      startVal [time (s)] = 1
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      text:
        即时选择的奖赏         延迟一年的奖赏
    TextComponent text5_2
      letterHeight = 0.05
      pos = (-0.2, -0.1)
      startVal [time (s)] = 1
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      text [set every repeat]:
        $x5
    TextComponent text5_3
      letterHeight = 0.05
      pos = (0.2, -0.1)
      startVal [time (s)] = 1
      text = 1000
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    KeyboardComponent key_resp_1year
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        x5=500
        n5=4
        z4=500
      End Routine:
        if 'left'in key_resp_1year.keys:
            z4=x5
            x5-=1000/n5
            n5*=2
            y="即时奖励"
        if 'right' in key_resp_1year.keys:
            x5+=1000/n5
            n5*=2
            z4=1000
            y="一年后的奖励"
  Routine choice_5years
    TextComponent concentration
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent text7_1
      letterHeight = 0.05
      startVal [time (s)] = 1
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      text:
        即时选择的奖赏         延迟五年的奖赏
    TextComponent text7_2
      letterHeight = 0.05
      pos = (-0.2, -0.1)
      startVal [time (s)] = 1
      text [set every repeat] = $x7
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    TextComponent text7_3
      letterHeight = 0.05
      pos = (0.2, -0.1)
      startVal [time (s)] = 1
      text = 1000
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    KeyboardComponent key_resp7
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        x7=500
        n7=4
      End Routine:
        if 'left'in key_resp7.keys:
            x7-=1000/n7
            n7*=2
        if 'right' in key_resp7.keys:
            x7+=1000/n7
            n7*=2
  Routine choice_25years
    TextComponent concentration9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent text9_1
      letterHeight = 0.05
      startVal [time (s)] = 1
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      text:
        即时选择的奖赏         延迟二十五年的奖赏
    TextComponent text9_2
      letterHeight = 0.05
      pos = (-0.2, -0.1)
      startVal [time (s)] = 1
      text [set every repeat] = $x9
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    TextComponent text9_3
      letterHeight = 0.05
      pos = (0.2, -0.1)
      startVal [time (s)] = 1
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      text [set every repeat]:
        1000
    KeyboardComponent key_resp25years
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        x9=500
        n9=4
        z7=500
      End Routine:
        if 'left'in key_resp25years.keys:
            z7=x9
            x9-=1000/n9
            n9*=2
            y="即时奖励"
        if 'right' in key_resp25years.keys:
            x9+=1000/n9
            n9*=2
            z7=1000
            y="二十五年后的奖励"
  Routine feed_back1
    TextComponent feedback1_1
      color = blue
      letterHeight = 0.05
      pos = (-0.1, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $y
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    TextComponent feedback1_2
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 您的选择是
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    TextComponent feedback1_3
      color = blue
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $z1
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  Routine choice_week_2
    TextComponent concentration1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent text_1_1
      letterHeight = 0.05
      startVal [time (s)] = 1.0
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      text:
        即时选择的奖赏         延迟一周的奖赏
    TextComponent text_1_2
      letterHeight = 0.05
      pos = (-0.2, -0.1)
      startVal [time (s)] = 1
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      text [set every repeat]:
        $x1
    TextComponent text_1_3
      letterHeight = 0.05
      pos = (0.2, -0.1)
      startVal [time (s)] = 1
      text = 1000
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    KeyboardComponent key_resp_1week
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        x1=500
        n1=4
        z1=500
        y=0
      End Routine:
        if "left"in key_resp_1week.keys:
            z1=x1
            x1-=1000/n1
            n1*=2
            y="即时奖励:"
        if 'right' in key_resp_1week.keys:
            x1+=1000/n1
            n1*=2
            z1=1000
            y="一周后的奖励:"
  Routine feed_back2
    TextComponent feedback2_1
      color = blue
      letterHeight = 0.05
      pos = (-0.1, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $y
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    TextComponent feedback2_2
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 您的选择是
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    TextComponent feedback2_3
      color = blue
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $z2
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  Routine feed_back3
    TextComponent feedback3_1
      color = blue
      letterHeight = 0.05
      pos = (-0.1, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $y
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    TextComponent feedback3_2
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 您的选择是
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    TextComponent feedback3_3
      color = blue
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $z3
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  Routine feed_back4
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  Routine feed_back6
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  Routine feed_back5
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  Routine feedback7
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  Routine choice_5years_2
    TextComponent concentration8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent text8_1
      letterHeight = 0.05
      startVal [time (s)] = 1
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      text:
        即时选择的奖赏         延迟五年的奖赏
    TextComponent text8_2
      letterHeight = 0.05
      pos = (-0.2, -0.1)
      startVal [time (s)] = 1
      text [set every repeat] = $x8
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    TextComponent text8_3
      letterHeight = 0.05
      pos = (0.2, -0.1)
      startVal [time (s)] = 1
      text = 1000
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    KeyboardComponent key_resp5years
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        x8=500
        n8=4
        z6=500
      End Routine:
        if 'left'in key_resp5years.keys:
            z6=x8
            x8-=1000/n8
            n8*=2
            y="即时奖励"
        if 'right' in key_resp5years.keys:
            x8+=1000/n8
            n8*=2
            z6=1000
            y="五年后的奖励"
  Routine instruction5
    TextComponent text0_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果准备好了，请进入正式测试

        （继续，请按空格键）
    KeyboardComponent key_resp0_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine choice_2weeks
    TextComponent concentration6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent text6_1
      letterHeight = 0.05
      startVal [time (s)] = 1
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      text:
        即时选择的奖赏         延迟两周的奖赏
    TextComponent text6_2
      letterHeight = 0.05
      pos = (-0.2, -0.1)
      startVal [time (s)] = 1
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      text [set every repeat]:
        $x6
    TextComponent text6_3
      letterHeight = 0.05
      pos = (0.2, -0.1)
      startVal [time (s)] = 1
      text = 1000
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    KeyboardComponent key_resp_2weeks
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        x6=500
        n6=4
        z5=500
      End Routine:
        if 'left'in key_resp_2weeks.keys:
            z5=x6
            x6-=1000/n6
            n6*=2
            y="即时奖励"
        if 'right' in key_resp_2weeks.keys:
            x6+=1000/n6
            n6*=2
            z5=1000
            y="两周后的奖励"
  Routine tip1
    TextComponent tip_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        （第一阶段）

        即时选择的奖赏
        对比
                        的奖赏
    TextComponent text_3
      color = red
      letterHeight = 0.05
      pos = (-0.075, -0.085)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 延迟一周
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  Routine tip2
    TextComponent tip_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        （第二阶段）

        即时选择的奖赏
        对比
                        的奖赏
    TextComponent text_4
      color = green
      letterHeight = 0.05
      pos = (-0.075, -0.085)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 延迟两周
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  Routine tip3
    TextComponent tip_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        （第三阶段）

        即时选择的奖赏
        对比
                        的奖赏
    TextComponent text_5
      color = red
      letterHeight = 0.05
      pos = (-0.1, -0.085)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 延迟一个月
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  Routine tip4
    TextComponent tip_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        （第四阶段）

        即时选择的奖赏
        对比
                        的奖赏
    TextComponent text_6
      color = green
      letterHeight = 0.05
      pos = (-0.1, -0.085)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 延迟六个月
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  Routine tip5
    TextComponent tip_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        （第五阶段）

        即时选择的奖赏
        对比
                        的奖赏
    TextComponent text_7
      color = red
      letterHeight = 0.05
      pos = (-0.075, -0.085)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 延迟一年
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  Routine tip6
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        （第六阶段）

        即时选择的奖赏
        对比
                        的奖赏
    TextComponent text_8
      color = red
      letterHeight = 0.05
      pos = (-0.075, -0.085)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 延迟五年
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  Routine tip7
    TextComponent tip_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        （第七阶段）

        即时选择的奖赏
        对比
                        的奖赏
    TextComponent text_9
      color = red
      letterHeight = 0.05
      pos = (-0.13, -0.085)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 延迟二十五年
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Flow
  Routine instruction1
  Routine instruction2
  Routine instruction3
  Routine instruction4
  Routine instruction5
  Routine tip1
  LoopInitiator loop1 loopType="TrialHandler"
    loopType = random
    nReps = 7
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    Routine choice_week_2
    Routine feed_back1
  LoopTerminator loop1
  Routine tip2
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine choice_2weeks
    Routine feed_back5
  LoopTerminator trials
  Routine tip3
  LoopInitiator loop3 loopType="TrialHandler"
    loopType = random
    nReps = 7
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    Routine choice_month
    Routine feed_back2
  LoopTerminator loop3
  Routine tip4
  LoopInitiator loop4 loopType="TrialHandler"
    loopType = random
    nReps = 7
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    Routine choice_months
    Routine feed_back3
  LoopTerminator loop4
  Routine tip5
  LoopInitiator loop5 loopType="TrialHandler"
    loopType = random
    nReps = 7
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    Routine choice_year
    Routine feed_back4
  LoopTerminator loop5
  Routine tip6
  LoopInitiator loop8 loopType="TrialHandler"
    loopType = random
    nReps = 7
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    Routine choice_5years_2
    Routine feed_back6
  LoopTerminator loop8
  Routine tip7
  LoopInitiator loop9 loopType="TrialHandler"
    loopType = random
    nReps = 7
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    Routine choice_25years
    Routine feedback7
  LoopTerminator loop9
  Routine thanks
