PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', '姓名拼音': '', '男1/女2': '', '入院1/出院2': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = Time_Perception
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Routines
  Routine instruction1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加测试

        （听觉部分）

        （继续，请按空格键）
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine instruction2
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        播放完毕后，请您对声音进行复制

        开始复制，请按下左键；
        完成复制，请按下右键。

        （继续，请按空格键）
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine instruction3
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果准备好了，请进入正式测试！

        （继续，请按空格键）
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine instruction4
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在进入视觉部分

        （继续，请按空格键）
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine breaking
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        听觉部分已结束！

        现在是休息阶段

        （继续，请按空格键）
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction5
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        呈现完毕后，请您对方块呈现时长进行复制

        开始复制，请按下左键；
        完成复制，请按下右键。

        （继续，请按空格键）
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction6
    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果准备好了，请进入正式测试！

        （继续，请按空格键）
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial1
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_19
      letterHeight = 0.06
      pos = (0, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $p
      text = 请仔细听声音······
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    ImageComponent image
      image = image\pic.jpg
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $p
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    SoundComponent sound_1
      sound = 600
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $m
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = $s1
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent image_2
      image = image\pic.jpg
      size = (0.2, 0.2)
      startVal [time (s)] = $s2
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = $s2
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      text:
        开始复制，请按下左键；
        完成复制，请按下右键。
    KeyboardComponent key_resp_2
      allowedKeys = 'left'
      correctAns = $j
      forceEndRoutine = True
      startVal [time (s)] = $s2
      store = first key
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  Routine trial2
    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_20
      letterHeight = 0.06
      pos = (0, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $p
      text = 请注意黑块呈现时间······
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    ImageComponent image_3
      image = image\black.jpg
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $p
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    TextComponent text_12
      letterHeight = 0.1
      startVal [time (s)] = $s1
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent image_4
      image = image\black.jpg
      size = (0.2, 0.2)
      startVal [time (s)] = $s2
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    TextComponent text_13
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = $s2
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      text:
        开始复制，请按下左键；
        完成复制，请按下右键。
    KeyboardComponent key_resp_9
      allowedKeys = 'left'
      correctAns = $j
      forceEndRoutine = True
      startVal [time (s)] = $s2
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  Routine ending
    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = 测试结束，谢谢您的参与！
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  Routine trial1_1
    ImageComponent image_5
      image = image\pic.jpg
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent text_15
      letterHeight = 0.06
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = 正在复制······
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    SoundComponent sound_2
      sound = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    KeyboardComponent key_resp_12
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine trial1_2
    TextComponent text_17
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine trial2_1
    ImageComponent image_6
      image = image\black.jpg
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent text_16
      letterHeight = 0.06
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = 正在复制······
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    KeyboardComponent key_resp_10
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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  Routine trial2_2
    TextComponent text_18
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine instruction1_1
    TextComponent text_21
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        首先，屏幕中央会出现一个“+”，随会
        出现一个喇叭，同时呈现一段音效。

        （继续，请按空格键）
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction4_1
    TextComponent text_22
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        同样，屏幕中央会出现一个“+”，
        随后，会出现一个黑色方块，一段时间后消失

        （继续，请按空格键）
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction1
  Routine instruction1_1
  Routine instruction2
  Routine instruction3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = documentation\Loop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('p', 1.0), ('m', 1.0), ('s1', 1.5), ('s2', 2.0), ('j', 1.0)]),
      OrderedDict([('p', 1.0), ('m', 1.0), ('s1', 1.5), ('s2', 2.0), ('j', 1.0)]),
      OrderedDict([('p', 1.0), ('m', 1.0), ('s1', 1.5), ('s2', 2.0), ('j', 1.0)]),
      OrderedDict([('p', 1.5), ('m', 1.5), ('s1', 2.0), ('s2', 2.5), ('j', 1.5)]),
      OrderedDict([('p', 1.5), ('m', 1.5), ('s1', 2.0), ('s2', 2.5), ('j', 1.5)]),
      OrderedDict([('p', 1.5), ('m', 1.5), ('s1', 2.0), ('s2', 2.5), ('j', 1.5)]),
      OrderedDict([('p', 2.0), ('m', 2.0), ('s1', 2.5), ('s2', 3.0), ('j', 2.0)]),
      OrderedDict([('p', 2.0), ('m', 2.0), ('s1', 2.5), ('s2', 3.0), ('j', 2.0)]),
      OrderedDict([('p', 2.0), ('m', 2.0), ('s1', 2.5), ('s2', 3.0), ('j', 2.0)]),
      OrderedDict([('p', 2.5), ('m', 2.5), ('s1', 3.0), ('s2', 3.5), ('j', 2.5)]),
      OrderedDict([('p', 2.5), ('m', 2.5), ('s1', 3.0), ('s2', 3.5), ('j', 2.5)]),
      OrderedDict([('p', 2.5), ('m', 2.5), ('s1', 3.0), ('s2', 3.5), ('j', 2.5)]),
      OrderedDict([('p', 3.0), ('m', 3.0), ('s1', 3.5), ('s2', 4.0), ('j', 3.0)]),
      OrderedDict([('p', 3.0), ('m', 3.0), ('s1', 3.5), ('s2', 4.0), ('j', 3.0)]),
      OrderedDict([('p', 3.0), ('m', 3.0), ('s1', 3.5), ('s2', 4.0), ('j', 3.0)]),
      OrderedDict([('p', 3.5), ('m', 3.5), ('s1', 4.0), ('s2', 4.5), ('j', 3.5)]),
      OrderedDict([('p', 3.5), ('m', 3.5), ('s1', 4.0), ('s2', 4.5), ('j', 3.5)]),
      OrderedDict([('p', 3.5), ('m', 3.5), ('s1', 4.0), ('s2', 4.5), ('j', 3.5)]),
      OrderedDict([('p', 4.0), ('m', 4.0), ('s1', 4.5), ('s2', 5.0), ('j', 4.0)])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
    Routine trial1
    Routine trial1_1
    Routine trial1_2
  LoopTerminator trials
  Routine breaking
  Routine instruction4
  Routine instruction4_1
  Routine instruction5
  Routine instruction6
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = documentation\Loop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('p', 1.0), ('m', 1.0), ('s1', 1.5), ('s2', 2.0), ('j', 1.0)]),
      OrderedDict([('p', 1.0), ('m', 1.0), ('s1', 1.5), ('s2', 2.0), ('j', 1.0)]),
      OrderedDict([('p', 1.0), ('m', 1.0), ('s1', 1.5), ('s2', 2.0), ('j', 1.0)]),
      OrderedDict([('p', 1.5), ('m', 1.5), ('s1', 2.0), ('s2', 2.5), ('j', 1.5)]),
      OrderedDict([('p', 1.5), ('m', 1.5), ('s1', 2.0), ('s2', 2.5), ('j', 1.5)]),
      OrderedDict([('p', 1.5), ('m', 1.5), ('s1', 2.0), ('s2', 2.5), ('j', 1.5)]),
      OrderedDict([('p', 2.0), ('m', 2.0), ('s1', 2.5), ('s2', 3.0), ('j', 2.0)]),
      OrderedDict([('p', 2.0), ('m', 2.0), ('s1', 2.5), ('s2', 3.0), ('j', 2.0)]),
      OrderedDict([('p', 2.0), ('m', 2.0), ('s1', 2.5), ('s2', 3.0), ('j', 2.0)]),
      OrderedDict([('p', 2.5), ('m', 2.5), ('s1', 3.0), ('s2', 3.5), ('j', 2.5)]),
      OrderedDict([('p', 2.5), ('m', 2.5), ('s1', 3.0), ('s2', 3.5), ('j', 2.5)]),
      OrderedDict([('p', 2.5), ('m', 2.5), ('s1', 3.0), ('s2', 3.5), ('j', 2.5)]),
      OrderedDict([('p', 3.0), ('m', 3.0), ('s1', 3.5), ('s2', 4.0), ('j', 3.0)]),
      OrderedDict([('p', 3.0), ('m', 3.0), ('s1', 3.5), ('s2', 4.0), ('j', 3.0)]),
      OrderedDict([('p', 3.0), ('m', 3.0), ('s1', 3.5), ('s2', 4.0), ('j', 3.0)]),
      OrderedDict([('p', 3.5), ('m', 3.5), ('s1', 4.0), ('s2', 4.5), ('j', 3.5)]),
      OrderedDict([('p', 3.5), ('m', 3.5), ('s1', 4.0), ('s2', 4.5), ('j', 3.5)]),
      OrderedDict([('p', 3.5), ('m', 3.5), ('s1', 4.0), ('s2', 4.5), ('j', 3.5)]),
      OrderedDict([('p', 4.0), ('m', 4.0), ('s1', 4.5), ('s2', 5.0), ('j', 4.0)])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
    Routine trial2
    Routine trial2_1
    Routine trial2_2
  LoopTerminator trials_2
  Routine ending
