PsychoPy2experiment version="2021.2.2"
Settings
  Experiment info = {'participant': '', '姓名频音': '', '男1/女2': '', '入院1/出院2': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Creative_Idea_Task
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Routines
  Routine introduction_tot
    TextComponent introduction_1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        欢迎参加创造力测试

        本测试包括两个部分

        （继续，请按空格键）
    KeyboardComponent key_total
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial2
    TextComponent concentra
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent word
      letterHeight = 0.07
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 120
      text [set every repeat] = $object
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    TextComponent trial2_num
      letterHeight = 0.07
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 120
      text [set every repeat] = $num
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  Routine thanks
    TextComponent over
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 实验结束，感谢您参与实验！
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  Routine introduction_part1_2
    KeyboardComponent key_part1_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent introduction_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        请将后面30道题目的答案写在答题纸上。
        每个题目，您有15s思考时间和5s作答时间。

        (继续，请按空格键)
  Routine introduction_part1_3
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        现在进入第二种类型的测试：发散思维能力

        （继续，请按空格键）
    KeyboardComponent key_part1_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine introduction_part2_1
    KeyboardComponent key_part2_1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        这是第二种类型：发散思维能力

        测试开始时，屏幕中间会出现注视点“+”
        之后屏幕上会出现我们生活中常见的
        物品词汇。请您尽可能地写出该物品
        的不同新颖用途，想法越多越好。

        （继续，请按空格键）
  Routine introduction_part2_2
    KeyboardComponent key_part2_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        请您将后面6道题的答案写在答题纸上。
        每个题目您有2min的思考和作答时间。

        （继续，请按空格键）
  Routine introduction_part1
    KeyboardComponent key_part1_1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent introduction_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        这是第一种类型：聚合思维能力

        测试开始时，屏幕中间会出现注视点“+”，
        之后每个题目会出现三个有某种联系的字，
        需要你找到另外一个字，分别和这三个字
        都能组成词。

        （继续，请按空格键）
  Routine breaking
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        第一种类型测试结束！

        现在是休息阶段

        （继续，请按空格键）
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine introduction_part1_4
    TextComponent text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        本部分没有练习！

        如果准备好了，请进入正式测试！

        （继续，请按空格键）
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine introduction_part2_3
    TextComponent text_6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        本部分没有练习！

        如果准备好了，请进入正式测试！

        （继续，请按空格键）
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine introduction_part1_1
    TextComponent text_7
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        例如，“贯/看/透”。
        “穿”是和这三个字都存在联系的其中一个字。

        （继续，请按空格键）
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine trial1_1
    TextComponent concentration
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent question_num
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 15
      text [set every repeat] = $num
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    TextComponent left_character
      letterHeight = 0.1
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 15
      text [set every repeat] = $left
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    TextComponent middle_character
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 15
      text [set every repeat] = $middle
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    TextComponent right_character
      letterHeight = 0.1
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 15
      text [set every repeat] = $right
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    TextComponent write_answer1
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 15.5
      stopVal [duration (s)] = 5
      text = 请将答案写在答题纸上
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  Routine trial1_2
    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_9
      letterHeight = 0.1
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 15
      text [set every repeat] = $left
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    TextComponent text_10
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 15
      text [set every repeat] = $middle
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    TextComponent text_11
      letterHeight = 0.1
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 15
      text [set every repeat] = $right
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    TextComponent text_12
      letterHeight = 0.07
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 15
      text [set every repeat] = $num
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    TextComponent text_13
      letterHeight = 0.07
      startVal [time (s)] = 15.5
      stopVal [duration (s)] = 5
      text = 请将答案写在答题纸上
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  Routine trial1_3
    TextComponent text_16
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_17
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 15
      text [set every repeat] = $num
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    TextComponent text_18
      letterHeight = 0.1
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 15
      text [set every repeat] = $left
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    TextComponent text_19
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 15
      text [set every repeat] = $middle
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    TextComponent text_20
      letterHeight = 0.1
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 15
      text [set every repeat] = $right
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    TextComponent text_21
      letterHeight = 0.1
      startVal [time (s)] = 15.5
      stopVal [duration (s)] = 5
      text = 请将答案写在答题纸上
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  Routine trial1_break1
    TextComponent text_14
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        已完成10道

        （继续，请按空格键）
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine trial1_break2
    TextComponent text_15
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        已完成20道

        （继续，请按空格键）
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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Flow
  Routine introduction_tot
  Routine introduction_part1
  Routine introduction_part1_1
  Routine introduction_part1_2
  Routine introduction_part1_4
  LoopInitiator loop1 loopType="TrialHandler"
    Selected rows = 1
    conditionsFile = document\part1_1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'num': '第1题', 'left': '检', 'middle': '读', 'right': '历'},
      {'num': '第2题', 'left': '语', 'middle': '完', 'right': '本'},
      {'num': '第3题', 'left': '表', 'middle': '助', 'right': '枪'},
      {'num': '第4题', 'left': '独', 'middle': '场', 'right': '刻'},
      {'num': '第5题', 'left': '怒', 'middle': '出', 'right': '休'},
      {'num': '第6题', 'left': '慰', 'middle': '功', 'right': '动'},
      {'num': '第7题', 'left': '考', 'middle': '代', 'right': '诗'},
      {'num': '第8题', 'left': '理', 'middle': '件', 'right': '面'},
      {'num': '第9题', 'left': '尚', 'middle': '临', 'right': '代'},
      {'num': '第10题', 'left': '复', 'middle': '交', 'right': '技'}]
    Routine trial1_1
  LoopTerminator loop1
  Routine trial1_break1
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 1
    conditionsFile = document\part1_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'num': '第11题', 'left': '状', 'middle': '单', 'right': '帅'},
      {'num': '第12题', 'left': '生', 'middle': '跃', 'right': '动'},
      {'num': '第13题', 'left': '道', 'middle': '费', 'right': '线'},
      {'num': '第14题', 'left': '稿', 'middle': '原', 'right': '地'},
      {'num': '第15题', 'left': '装', 'middle': '围', 'right': '含'},
      {'num': '第16题', 'left': '早', 'middle': '起', 'right': '特'},
      {'num': '第17题', 'left': '场', 'middle': '推', 'right': '告'},
      {'num': '第18题', 'left': '夕', 'middle': '法', 'right': '开'},
      {'num': '第19题', 'left': '短', 'middle': '限', 'right': '望'},
      {'num': '第20题', 'left': '诉', 'middle': '资', 'right': '影'}]
    Routine trial1_2
  LoopTerminator trials
  Routine trial1_break2
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 1
    conditionsFile = document\part1_3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'num': '第21题', 'left': '电', 'middle': '近', 'right': '野'},
      {'num': '第22题', 'left': '青', 'middle': '通', 'right': '良'},
      {'num': '第23题', 'left': '轻', 'middle': '树', 'right': '放'},
      {'num': '第24题', 'left': '替', 'middle': '山', 'right': '房'},
      {'num': '第25题', 'left': '鼠', 'middle': '地', 'right': '野'},
      {'num': '第26题', 'left': '姿', 'middle': '力', 'right': '气'},
      {'num': '第27题', 'left': '居', 'middle': '坚', 'right': '约'},
      {'num': '第28题', 'left': '意', 'middle': '果', 'right': '今'},
      {'num': '第29题', 'left': '风', 'middle': '平', 'right': '讲'},
      {'num': '第30题', 'left': '归', 'middle': '利', 'right': '序'}]
    Routine trial1_3
  LoopTerminator trials_2
  Routine breaking
  Routine introduction_part1_3
  Routine introduction_part2_1
  Routine introduction_part2_2
  Routine introduction_part2_3
  LoopInitiator loop2 loopType="TrialHandler"
    Selected rows = 2
    conditionsFile = document\part_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'object': '笔', 'num': '第1题'},
      {'object': '报纸', 'num': '第2题'},
      {'object': '毛巾', 'num': '第3题'},
      {'object': '瓶子', 'num': '第4题'},
      {'object': '砖块', 'num': '第5题'},
      {'object': '回形针', 'num': '第6题'}]
    Routine trial2
  LoopTerminator loop2
  Routine thanks
