PsychoPy2experiment version="2021.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Memory_Task
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Routines
  Routine introduction
    ImageComponent image
      image = image/introduction.png
      saveStartStop = False
      size = (1.76, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent introduction_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import string
        allLetters = list(string.digits)
      Begin Experiment:
        button = 4
        button_re =4
        textFill = ''
        over = 0
        over_re = 0
  Routine five
    TextComponent text
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = 下一道题目
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    TextComponent concentration_five
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent five_1
      letterHeight = 0.1
      pos = (-0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
      text = 3
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    TextComponent five_2
      letterHeight = 0.1
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.3
      text = 4
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    TextComponent five_3
      letterHeight = 0.1
      pos = (0, -0.07)
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 0.3
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      text:
        6
    TextComponent five_4
      letterHeight = 0.1
      pos = (0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = 0.3
      text = 1
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    TextComponent five_5
      letterHeight = 0.1
      pos = (0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 0.3
      text = 3
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    TextComponent five_input
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 2.5
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    TextComponent five_tip
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 2.5
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      text:
        请顺序输入呈现的数字
          （回车键结束）
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if button ==5:
            textFill = ''
            five_input.setText(textFill)
            win.flip()
        else:
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                five_input.setText(textFill)  # Set new text on screen
                if keys[0] == 'return':
                    textFill.strip()
                    thisExp.addData('five', textFill)
                    if textFill == '34613':
                        thisExp.addData('five_corr', 1)
                        button += 1
                        if over == 1:
                            loop_or.finished = True
                            button -= 1
                            thisExp.addData('result', button)
                            textFill = ''
                            five_input.setText(textFill)
                            win.flip()
                    else:
                        thisExp.addData('five_corr', 0)
                        over = 1
                        button -= 1
                        textFill = ''
                        five_input.setText(textFill)
                        win.flip()
                        continueRoutine = False
                    continueRoutine = False
  Routine six
    TextComponent text_2
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = 下一道题目
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    TextComponent concentration_six
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent six_1
      letterHeight = 0.1
      pos = (-0.25, 0)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
      text = 2
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    TextComponent six_2
      letterHeight = 0.1
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.3
      text = 2
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    TextComponent six_3
      letterHeight = 0.1
      pos = (-0.05, 0)
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 0.3
      text = 7
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    TextComponent six_4
      letterHeight = 0.1
      pos = (0.05, 0)
      saveStartStop = False
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = 0.3
      text = 4
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    TextComponent six_5
      letterHeight = 0.1
      pos = (0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 0.3
      text = 8
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    TextComponent six_6
      letterHeight = 0.1
      pos = (0.25, 0)
      saveStartStop = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.3
      text = 5
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    TextComponent six_input
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 2.8
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    TextComponent six_tip
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 2.8
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      text:
        请顺序输入呈现的数字
          （回车键结束）
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if button ==6:
            textFill = ''
            six_input.setText(textFill)
            win.flip()
        else:
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                six_input.setText(textFill)  # Set new text on screen
                if keys[0] == 'return':
                    textFill.strip()
                    thisExp.addData('six', textFill)
                    if textFill == '227485':
                        thisExp.addData('six_corr', 1)
                        button += 1
                        if over == 1:
                            loop_or.finished = True
                            button -= 1
                            thisExp.addData('result', button)
                            textFill = ''
                            six_input.setText(textFill)
                            win.flip()
                    else:
                        thisExp.addData('six_corr', 0)
                        over = 1
                        button -= 1
                        textFill = ''
                        six_input.setText(textFill)
                        win.flip()
                        continueRoutine = False
                    continueRoutine = False
  Routine four
    TextComponent four_concentration
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent four_1
      letterHeight = 0.1
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      text = 8
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    TextComponent four_2
      letterHeight = 0.1
      pos = (-0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.3
      text = 1
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    TextComponent four_3
      letterHeight = 0.1
      pos = (0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 1.1
      stopVal [duration (s)] = 0.3
      text = 7
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    TextComponent four_4
      letterHeight = 0.1
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 1.4
      stopVal [duration (s)] = 0.3
      text = 4
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    TextComponent four_input
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 1.7
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    TextComponent four_tip
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 1.7
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      text:
        请顺序输入呈现的数字
          （回车键结束）
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if button == 4:
            textFill = ''
            four_input.setText(textFill)
            win.flip()
        else:
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                four_input.setText(textFill)  # Set new text on screen
                if keys[0] == 'return':
                    textFill.strip()
                    thisExp.addData('four', textFill)
                    if int(textFill) == 8174:
                        thisExp.addData('four_corr', 1)
                        button += 1
                        if over == 1:
                            loop_or.finished = True
                            button -= 1
                            thisExp.addData('result', button)
                            textFill = ''
                            four_input.setText(textFill)
                            win.flip()
                    else:
                        thisExp.addData('four_corr', 0)
                        thisExp.addData('result', 0)
                        textFill = ''
                        four_input.setText(textFill)
                        win.flip()
                        loop_or.finished = True
                        continueRoutine = False
                    continueRoutine = False
  Routine eight
    TextComponent text_4
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = 下一道题目
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    TextComponent eight_concentration
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent eight_1
      letterHeight = 0.1
      pos = (-0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
      text = 4
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    TextComponent eight_2
      letterHeight = 0.1
      pos = (-0.25, 0)
      saveStartStop = False
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.3
      text = 3
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    TextComponent eight_3
      letterHeight = 0.1
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 0.3
      text = 7
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    TextComponent eight_4
      letterHeight = 0.1
      pos = (-0.05, 0)
      saveStartStop = False
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = 0.3
      text = 8
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    TextComponent eight_5
      letterHeight = 0.1
      pos = (0.05, 0)
      saveStartStop = False
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 0.3
      text = 9
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    TextComponent eight_6
      letterHeight = 0.1
      pos = (0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.3
      text = 7
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    TextComponent eight_7
      letterHeight = 0.1
      pos = (0.25, 0)
      saveStartStop = False
      startVal [time (s)] = 2.8
      stopVal [duration (s)] = 0.3
      text = 8
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    TextComponent eight_8
      letterHeight = 0.1
      pos = (0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 3.1
      stopVal [duration (s)] = 0.3
      text = 6
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    TextComponent eight_input
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 3.4
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    TextComponent eight_tip
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 3.4
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      text:
        请顺序输入呈现的数字
          （回车键结束）
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if button == 8:
            textFill = ''
            eight_input.setText(textFill)
            win.flip()
        else:
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                eight_input.setText(textFill)  # Set new text on screen
                if keys[0] == 'return':
                    textFill.strip()
                    thisExp.addData('eight', textFill)
                    if textFill == '43789786':
                        thisExp.addData('eight_corr', 1)
                        button += 1
                        if over == 1:
                            loop_or.finished = True
                            button -= 1
                            thisExp.addData('result', button)
                            textFill = ''
                            eight_input.setText(textFill)
                            win.flip()
                    else:
                        thisExp.addData('eight_corr', 0)
                        over = 1
                        button -= 1
                        textFill = ''
                        eight_input.setText(textFill)
                        win.flip()
                        continueRoutine = False
                    continueRoutine = False
  Routine nine
    TextComponent text_5
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = 下一道题目
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    TextComponent nine_concentration
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent nine_1
      letterHeight = 0.1
      pos = (-0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
      text = 4
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    TextComponent nine_2
      letterHeight = 0.1
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.3
      text = 4
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    TextComponent nine_3
      letterHeight = 0.1
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 0.3
      text = 3
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    TextComponent nine_4
      letterHeight = 0.1
      pos = (-0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = 0.3
      text = 5
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    TextComponent nine_5
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 0.3
      text = 2
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    TextComponent nine_6
      letterHeight = 0.1
      pos = (0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.3
      text = 1
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    TextComponent nine_7
      letterHeight = 0.1
      pos = (0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 2.8
      stopVal [duration (s)] = 0.3
      text = 7
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    TextComponent nine_8
      letterHeight = 0.1
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 3.1
      stopVal [duration (s)] = 0.3
      text = 2
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    TextComponent nine_9
      letterHeight = 0.1
      pos = (0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 3.4
      stopVal [duration (s)] = 0.3
      text = 9
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    TextComponent nine_input
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 3.7
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    TextComponent nine_tip
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 3.7
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      text:
        请顺序输入呈现的数字
          （回车键结束）
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if button == 9:
            textFill = ''
            nine_input.setText(textFill)
            win.flip()
        else:
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                nine_input.setText(textFill)  # Set new text on screen
                if keys[0] == 'return':
                    textFill.strip()
                    thisExp.addData('nine', textFill)
                    if textFill == '43789786':
                        thisExp.addData('nine_corr', 1)
                        button += 1
                        if over == 1:
                            loop_or.finished = True
                            button -= 1
                            thisExp.addData('result', button)
                            textFill = ''
                            nine_input.setText(textFill)
                            win.flip()
                    else:
                        thisExp.addData('nine_corr', 0)
                        over = 1
                        button -= 1
                        textFill = ''
                        nine_input.setText(textFill)
                        win.flip()
                        continueRoutine = False
                    continueRoutine = False
  Routine thanks
    TextComponent thank
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 感谢您参与本次实验！
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  Routine seven
    TextComponent text_3
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = 下一道题目
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    TextComponent concentration_seven
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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      text:
        +
    TextComponent seven_1
      letterHeight = 0.1
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
      text = 3
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    TextComponent seven_2
      letterHeight = 0.1
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.3
      text = 8
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    TextComponent seven_3
      letterHeight = 0.1
      pos = (-0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 0.3
      text = 6
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    TextComponent seven_4
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = 0.3
      text = 4
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    TextComponent seven_5
      letterHeight = 0.1
      pos = (0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 0.3
      text = 1
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    TextComponent seven_6
      letterHeight = 0.1
      pos = (0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.3
      text = 4
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    TextComponent seven_7
      letterHeight = 0.1
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 2.8
      stopVal [duration (s)] = 0.3
      text = 7
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    TextComponent seven_input
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 3.1
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    TextComponent seven_tip
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 3.1
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      text:
        请顺序输入呈现的数字
          （回车键结束）
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if button == 7:
            textFill = ''
            seven_input.setText(textFill)
            win.flip()
        else:
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                seven_input.setText(textFill)  # Set new text on screen
                if keys[0] == 'return':
                    textFill.strip()
                    thisExp.addData('seven', textFill)
                    if textFill == '3864147':
                        thisExp.addData('seven_corr', 1)
                        button += 1
                        if over == 1:
                            loop_or.finished = True
                            button -= 1
                            thisExp.addData('result', button)
                            textFill = ''
                            seven_input.setText(textFill)
                            win.flip()
                    else:
                        thisExp.addData('seven_corr', 0)
                        over = 1
                        button -= 1
                        textFill = ''
                        seven_input.setText(textFill)
                        win.flip()
                        continueRoutine = False
                    continueRoutine = False
  Routine four_re
    TextComponent four_re_concentration
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent four_re1
      letterHeight = 0.1
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      text = 1
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    TextComponent four_re2
      letterHeight = 0.1
      pos = (-0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.3
      text = 8
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    TextComponent four_re3
      letterHeight = 0.1
      pos = (0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 1.1
      stopVal [duration (s)] = 0.3
      text = 3
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    TextComponent four_re4
      letterHeight = 0.1
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 1.4
      stopVal [duration (s)] = 0.3
      text = 3
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    TextComponent four_re_input
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 1.7
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    TextComponent four_re_tip
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 1.7
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      text:
        请倒序输入呈现的数字
        （回车键结束）
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if button_re == 4:
            textFill = ''
            four_re_input.setText(textFill)
            win.flip()
        else:
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                four_re_input.setText(textFill)  # Set new text on screen
                if keys[0] == 'return':
                    textFill.strip()
                    thisExp.addData('four_re', textFill)
                    if int(textFill) == 3381:
                        thisExp.addData('four_re_corr', 1)
                        button_re += 1
                        if over_re == 1:
                            loop_re.finished = True
                            button_re -= 1
                            thisExp.addData('result_re', button_re)
                            textFill = ''
                            four_re_input.setText(textFill)
                            win.flip()
                    else:
                        thisExp.addData('four_re_corr', 0)
                        thisExp.addData('result_re', 0)
                        textFill = ''
                        four_re_input.setText(textFill)
                        win.flip()
                        loop_re.finished = True
                        continueRoutine = False
                    continueRoutine = False
  Routine five_re
    TextComponent text_8
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = 下一道题目
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    TextComponent five_re_concentration
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent five_re1
      letterHeight = 0.1
      pos = (-0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
      text = 6
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    TextComponent five_re2
      letterHeight = 0.1
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.3
      text = 3
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    TextComponent five_re3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 0.3
      text = 1
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    TextComponent five_re4
      letterHeight = 0.1
      pos = (0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = 0.3
      text = 5
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    TextComponent five_re5
      letterHeight = 0.1
      pos = (0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 0.3
      text = 2
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    TextComponent five_re_input
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 2.5
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    TextComponent five_re_tip
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 2.5
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      text:
        请倒序输入呈现的数字
          （回车键结束）
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        if button_re == 5:
            textFill = ''
            five_re_input.setText(textFill)
            win.flip()
        else:
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                five_re_input.setText(textFill)  # Set new text on screen
                if keys[0] == 'return':
                    textFill.strip()
                    thisExp.addData('five_re', textFill)
                    if textFill == '25136':
                        thisExp.addData('five_re_corr', 1)
                        button_re += 1
                        if over_re == 1:
                            loop_re.finished = True
                            button -= 1
                            thisExp.addData('result_re', button)
                            textFill = ''
                            five_re_input.setText(textFill)
                            win.flip()
                    else:
                        thisExp.addData('five_re_corr', 0)
                        over_re = 1
                        button_re -= 1
                        textFill = ''
                        five_re_input.setText(textFill)
                        win.flip()
                        continueRoutine = False
                    continueRoutine = False
  Routine six_re
    TextComponent text_9
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = 下一道题目
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    TextComponent six_re_concentration
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    TextComponent six_re1
      letterHeight = 0.1
      pos = (-0.25, 0)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
      text = 8
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    TextComponent six_re2
      letterHeight = 0.1
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.3
      text = 7
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    TextComponent six_re3
      letterHeight = 0.1
      pos = (-0.05, 0)
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 0.3
      text = 4
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    TextComponent six_re4
      letterHeight = 0.1
      pos = (0.05, 0)
      saveStartStop = False
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = 0.3
      text = 2
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    TextComponent six_re5
      letterHeight = 0.1
      pos = (0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 0.3
      text = 4
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    TextComponent six_re6
      letterHeight = 0.1
      pos = (0.25, 0)
      saveStartStop = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.3
      text = 8
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    TextComponent six_re_input
      letterHeight = 0.1
      startVal [time (s)] = 2.8
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    TextComponent six_re_tip
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 2.8
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      text:
        请倒序输入呈现的数字
          （回车键结束）
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        if button_re == 6:
            textFill = ''
            six_re_input.setText(textFill)
            win.flip()
        else:
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                six_re_input.setText(textFill)  # Set new text on screen
                if keys[0] == 'return':
                    textFill.strip()
                    thisExp.addData('six_re', textFill)
                    if textFill == '842478':
                        thisExp.addData('six_re_corr', 1)
                        button_re += 1
                        if over_re == 1:
                            loop_re.finished = True
                            button_re -= 1
                            thisExp.addData('result_re', button_re)
                            textFill = ''
                            six_re_input.setText(textFill)
                            win.flip()
                    else:
                        thisExp.addData('six_re_corr', 0)
                        over_re = 1
                        button_re -= 1
                        textFill = ''
                        six_re_input.setText(textFill)
                        win.flip()
                        continueRoutine = False
                    continueRoutine = False
  Routine ten
    TextComponent text_6
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = 下一道题目
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    TextComponent ten_concentration
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent ten_1
      letterHeight = 0.1
      pos = (-0.45, 0)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
      text = 3
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    TextComponent ten_2
      letterHeight = 0.1
      pos = (-0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.3
      text = 5
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    TextComponent ten_3
      letterHeight = 0.1
      pos = (-0.25, 0)
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 0.3
      text = 4
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    TextComponent ten_4
      letterHeight = 0.1
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = 0.3
      text = 4
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    TextComponent ten_5
      letterHeight = 0.1
      pos = (-0.05, 0)
      saveStartStop = False
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 0.3
      text = 2
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    TextComponent ten_6
      letterHeight = 0.1
      pos = (0.05, 0)
      saveStartStop = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.3
      text = 6
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    TextComponent ten_7
      letterHeight = 0.1
      pos = (0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 2.8
      stopVal [duration (s)] = 0.3
      text = 7
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    TextComponent ten_8
      letterHeight = 0.1
      pos = (0.25, 0)
      saveStartStop = False
      startVal [time (s)] = 3.1
      stopVal [duration (s)] = 0.3
      text = 9
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    TextComponent ten_9
      letterHeight = 0.1
      pos = (0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 3.4
      stopVal [duration (s)] = 0.3
      text = 8
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    TextComponent ten_10
      letterHeight = 0.1
      pos = (0.45, 0)
      saveStartStop = False
      startVal [time (s)] = 3.7
      stopVal [duration (s)] = 0.3
      text = 1
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    TextComponent ten_input
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 4
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    TextComponent ten_tip
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 4
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      text:
        请顺序输入呈现的数字
          （回车键结束）
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if button == 10:
            textFill = ''
            ten_input.setText(textFill)
            win.flip()
        else:
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                ten_input.setText(textFill)  # Set new text on screen
                if keys[0] == 'return':
                    textFill.strip()
                    thisExp.addData('ten', textFill)
                    if textFill == '43789786':
                        thisExp.addData('ten_corr', 1)
                        button += 1
                        if over == 1:
                            loop_or.finished = True
                            button -= 1
                            thisExp.addData('result', button)
                            textFill = ''
                            ten_input.setText(textFill)
                            win.flip()
                    else:
                        thisExp.addData('ten_corr', 0)
                        over = 1
                        button -= 1
                        textFill = ''
                        ten_input.setText(textFill)
                        win.flip()
                        continueRoutine = False
                    continueRoutine = False
  Routine eleven
    TextComponent text_7
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = 下一道题目
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    TextComponent eleven_concentration
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent eleven_1
      letterHeight = 0.1
      pos = (-0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
      text = 6
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    TextComponent eleven_2
      letterHeight = 0.1
      pos = (-0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.3
      text = 0
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    TextComponent eleven_3
      letterHeight = 0.1
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 0.3
      text = 2
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    TextComponent eleven_4
      letterHeight = 0.1
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = 0.3
      text = 8
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    TextComponent eleven_5
      letterHeight = 0.1
      pos = (-0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 0.3
      text = 4
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    TextComponent eleven_6
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.3
      text = 0
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    TextComponent eleven_7
      letterHeight = 0.1
      pos = (0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 2.8
      stopVal [duration (s)] = 0.3
      text = 9
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    TextComponent eleven_8
      letterHeight = 0.1
      pos = (0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 3.1
      stopVal [duration (s)] = 0.3
      text = 6
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    TextComponent eleven_9
      letterHeight = 0.1
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 3.4
      stopVal [duration (s)] = 0.3
      text = 3
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    TextComponent eleven_10
      letterHeight = 0.1
      pos = (0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 3.7
      stopVal [duration (s)] = 0.3
      text = 3
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    TextComponent eleven_11
      letterHeight = 0.1
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 0.3
      text = 5
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    TextComponent eleven_input
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 4.3
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    TextComponent eleven_tip
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 4.3
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      text:
        请顺序输入呈现的数字
          （回车键结束）
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        if button == 11:
            textFill = ''
            eleven_input.setText(textFill)
            win.flip()
        else:
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                eleven_input.setText(textFill)  # Set new text on screen
                if keys[0] == 'return':
                    textFill.strip()
                    thisExp.addData('eleven', textFill)
                    if textFill == '60284096335':
                        thisExp.addData('eleven_corr', 1)
                        button += 1
                        thisExp.addData('result', 11)
                        loop_or.finished = True
                        if over == 1:
                            loop_or.finished = True
                            button -= 1
                            thisExp.addData('result', button)
                            textFill = ''
                            eleven_input.setText(textFill)
                            win.flip()
                    else:
                        thisExp.addData('eleven_corr', 0)
                        over = 1
                        button -= 1
                        textFill = ''
                        eleven_input.setText(textFill)
                        win.flip()
                        continueRoutine = False
                    continueRoutine = False
  Routine seven_re
    TextComponent text_10
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = 下一道题目
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    TextComponent seven_re_concentration
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent seven_re1
      letterHeight = 0.1
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
      text = 7
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    TextComponent seven_re2
      letterHeight = 0.1
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.3
      text = 5
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    TextComponent seven_re3
      letterHeight = 0.1
      pos = (-0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 0.3
      text = 9
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    TextComponent seven_re4
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = 0.3
      text = 3
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    TextComponent seven_re5
      letterHeight = 0.1
      pos = (0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 0.3
      text = 4
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    TextComponent seven_re6
      letterHeight = 0.1
      pos = (0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.3
      text = 0
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    TextComponent seven_re7
      letterHeight = 0.1
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 2.8
      stopVal [duration (s)] = 0.3
      text = 4
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    TextComponent seven_re_input
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 3.1
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    TextComponent seven_re_tip
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 3.1
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      text:
        请倒序输入呈现的数字
          （回车键结束）
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        if button_re == 7:
            textFill = ''
            seven_re_input.setText(textFill)
            win.flip()
        else:
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                seven_re_input.setText(textFill)  # Set new text on screen
                if keys[0] == 'return':
                    textFill.strip()
                    thisExp.addData('seven_re', textFill)
                    if textFill == '4043957':
                        thisExp.addData('seven_re_corr', 1)
                        button_re += 1
                        if over == 1:
                            loop_re.finished = True
                            button_re -= 1
                            thisExp.addData('result_re', button_re)
                            textFill = ''
                            seven_re_input.setText(textFill)
                            win.flip()
                    else:
                        thisExp.addData('seven_re_corr', 0)
                        over = 1
                        button_re -= 1
                        textFill = ''
                        seven_re_input.setText(textFill)
                        win.flip()
                        continueRoutine = False
                    continueRoutine = False
  Routine eight_re
    TextComponent text_11
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = 下一道题目
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    TextComponent eight_re_concentration
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent eight_re1
      letterHeight = 0.1
      pos = (-0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
      text = 4
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    TextComponent eight_re2
      letterHeight = 0.1
      pos = (-0.25, 0)
      saveStartStop = False
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.3
      text = 1
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    TextComponent eight_re3
      letterHeight = 0.1
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 0.3
      text = 3
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    TextComponent eight_re4
      letterHeight = 0.1
      pos = (-0.05, 0)
      saveStartStop = False
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = 0.3
      text = 5
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    TextComponent eight_re5
      letterHeight = 0.1
      pos = (0.05, 0)
      saveStartStop = False
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 0.3
      text = 9
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    TextComponent eight_re6
      letterHeight = 0.1
      pos = (0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.3
      text = 3
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    TextComponent eight_re7
      letterHeight = 0.1
      pos = (0.25, 0)
      saveStartStop = False
      startVal [time (s)] = 2.8
      stopVal [duration (s)] = 0.3
      text = 2
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    TextComponent eight_re8
      letterHeight = 0.1
      pos = (0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 3.1
      stopVal [duration (s)] = 0.3
      text = 8
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    TextComponent eight_re_input
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 3.4
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    TextComponent eight_re_tip
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 3.4
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      text:
        请倒序输入呈现的数字
          （回车键结束）
    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        if button_re == 8:
            textFill = ''
            eight_re_input.setText(textFill)
            win.flip()
        else:
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                eight_re_input.setText(textFill)  # Set new text on screen
                if keys[0] == 'return':
                    textFill.strip()
                    thisExp.addData('eight_re', textFill)
                    if textFill == '82395314':
                        thisExp.addData('eight_re_corr', 1)
                        button_re += 1
                        if over == 1:
                            loop_re.finished = True
                            button_re -= 1
                            thisExp.addData('result_re', button_re)
                            textFill = ''
                            eight_re_input.setText(textFill)
                            win.flip()
                    else:
                        thisExp.addData('eight_re_corr', 0)
                        over = 1
                        button_re -= 1
                        textFill = ''
                        eight_re_input.setText(textFill)
                        win.flip()
                        continueRoutine = False
                    continueRoutine = False
  Routine nine_re
    TextComponent text_12
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = 下一道题目
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    TextComponent nine_re_concentration
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent nine_re1
      letterHeight = 0.1
      pos = (-0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
      text = 8
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    TextComponent nine_re2
      letterHeight = 0.1
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.3
      text = 6
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    TextComponent nine_re3
      letterHeight = 0.1
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 0.3
      text = 8
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    TextComponent nine_re4
      letterHeight = 0.1
      pos = (-0.1, 0)
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = 0.3
      text = 2
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    TextComponent nine_re5
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 0.3
      text = 4
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    TextComponent nine_re6
      letterHeight = 0.1
      pos = (0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.3
      text = 3
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    TextComponent nine_re7
      letterHeight = 0.1
      pos = (0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 2.8
      stopVal [duration (s)] = 0.3
      text = 5
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    TextComponent nine_re8
      letterHeight = 0.1
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 3.1
      stopVal [duration (s)] = 0.3
      text = 2
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    TextComponent nine_re9
      letterHeight = 0.1
      pos = (0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 3.4
      stopVal [duration (s)] = 0.3
      text = 1
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    TextComponent nine_re_input
      letterHeight = 0.1
      startVal [time (s)] = 3.7
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    TextComponent nine_re_tip
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 3.7
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      text:
        请倒序输入呈现的数字
          （回车键结束）
    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        if button_re == 9:
            textFill = ''
            nine_re_input.setText(textFill)
            win.flip()
        else:
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                nine_re_input.setText(textFill)  # Set new text on screen
                if keys[0] == 'return':
                    textFill.strip()
                    thisExp.addData('nine_re', textFill)
                    if textFill == '34613':
                        thisExp.addData('nine_re_corr', 1)
                        button_re_re += 1
                        if over == 1:
                            loop_re.finished = True
                            button_re -= 1
                            thisExp.addData('result_re', button_re)
                            textFill = ''
                            nine_re_input.setText(textFill)
                            win.flip()
                    else:
                        thisExp.addData('nine_re_corr', 0)
                        over = 1
                        button_re -= 1
                        textFill = ''
                        nine_re_input.setText(textFill)
                        win.flip()
                        continueRoutine = False
                    continueRoutine = False
  Routine ten_re
    TextComponent text_13
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = 下一道题目
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    TextComponent ten_re_concentration
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent ten_re1
      letterHeight = 0.1
      pos = (-0.45, 0)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
      text = 6
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    TextComponent ten_re2
      letterHeight = 0.1
      pos = (-0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.3
      text = 0
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    TextComponent ten_re3
      letterHeight = 0.1
      pos = (-0.25, 0)
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 0.3
      text = 3
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    TextComponent ten_re4
      letterHeight = 0.1
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = 0.3
      text = 8
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    TextComponent ten_re5
      letterHeight = 0.1
      pos = (-0.05, 0)
      saveStartStop = False
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 0.3
      text = 2
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    TextComponent ten_re6
      letterHeight = 0.1
      pos = (0.05, 0)
      saveStartStop = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.3
      text = 8
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    TextComponent ten_re7
      letterHeight = 0.1
      pos = (0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 2.8
      stopVal [duration (s)] = 0.3
      text = 3
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    TextComponent ten_re8
      letterHeight = 0.1
      pos = (0.25, 0)
      saveStartStop = False
      startVal [time (s)] = 3.1
      stopVal [duration (s)] = 0.3
      text = 7
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    TextComponent ten_re9
      letterHeight = 0.1
      pos = (0.35, 0)
      saveStartStop = False
      startVal [time (s)] = 3.4
      stopVal [duration (s)] = 0.3
      text = 5
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    TextComponent ten_re10
      letterHeight = 0.1
      pos = (0.45, 0)
      saveStartStop = False
      startVal [time (s)] = 3.7
      stopVal [duration (s)] = 0.3
      text = 6
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    TextComponent ten_re_input
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 4
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    TextComponent ten_re_tip
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 4
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      text:
        请倒序输入呈现的数字
          （回车键结束）
    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        if button_re == 10:
            textFill = ''
            ten_re_input.setText(textFill)
            win.flip()
        else:
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                ten_re_input.setText(textFill)  # Set new text on screen
                if keys[0] == 'return':
                    textFill.strip()
                    thisExp.addData('ten_re', textFill)
                    if textFill == '6573828306':
                        thisExp.addData('ten_re_corr', 1)
                        button_re_re += 1
                        if over == 1:
                            loop_re.finished = True
                            button_re -= 1
                            thisExp.addData('result_re', button_re)
                            textFill = ''
                            ten_re_input.setText(textFill)
                            win.flip()
                    else:
                        thisExp.addData('ten_re_corr', 0)
                        over = 1
                        button_re -= 1
                        textFill = ''
                        ten_re_input.setText(textFill)
                        win.flip()
                        continueRoutine = False
                    continueRoutine = False
  Routine eleven_re
    TextComponent text_14
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = 下一道题目
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    TextComponent eleven_re_concentration
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent eleven_re1
      letterHeight = 0.1
      pos = (-0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
      text = 9
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    TextComponent eleven_re2
      letterHeight = 0.1
      pos = (-0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 0.3
      text = 6
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    TextComponent eleven_re3
      letterHeight = 0.1
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 0.3
      text = 5
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    TextComponent eleven_re4
      letterHeight = 0.1
      pos = (-0.15, 0)
      saveStartStop = False
      startVal [time (s)] = 1.9
      stopVal [duration (s)] = 0.3
      text = 6
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    TextComponent eleven_re5
      letterHeight = 0.1
      pos = (-0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 0.3
      text = 8
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    TextComponent eleven_re6
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.3
      text = 9
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    TextComponent eleven_re7
      letterHeight = 0.1
      pos = (0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 2.8
      stopVal [duration (s)] = 0.3
      text = 6
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    TextComponent eleven_re8
      letterHeight = 0.1
      pos = (0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 3.1
      stopVal [duration (s)] = 0.3
      text = 8
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    TextComponent eleven_re9
      letterHeight = 0.1
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 3.4
      stopVal [duration (s)] = 0.3
      text = 0
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    TextComponent eleven_re10
      letterHeight = 0.1
      pos = (0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 3.7
      stopVal [duration (s)] = 0.3
      text = 4
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    TextComponent eleven_re11
      letterHeight = 0.1
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 0.3
      text = 2
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    TextComponent eleven_re_input
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 4.3
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    TextComponent eleven_re_tip
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 4.3
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      text:
        请倒序输入呈现的数字
          （回车键结束）
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        if button_re == 11:
            textFill = ''
            eleven_re_input.setText(textFill)
            win.flip()
        else:
            continueRoutine = False
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                eleven_re_input.setText(textFill)  # Set new text on screen
                if keys[0] == 'return':
                    textFill.strip()
                    thisExp.addData('eleven_re', textFill)
                    if textFill == '24086986569':
                        thisExp.addData('eleven_re_corr', 1)
                        button_re_re += 1
                        thisExp.addData('result', 11)
                        loop_re.finished = True
                        if over == 1:
                            loop_re.finished = True
                            button_re -= 1
                            thisExp.addData('result_re', button_re)
                            textFill = ''
                            eleven_re_input.setText(textFill)
                            win.flip()
                    else:
                        thisExp.addData('eleven_re_corr', 0)
                        over = 1
                        button_re -= 1
                        textFill = ''
                        eleven_re_input.setText(textFill)
                        win.flip()
                        continueRoutine = False
                    continueRoutine = False
  Routine re_introduction
    TextComponent text_15
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        第二部分

        屏幕会出现一系列数字
        请倒序列输入这些数字

        （继续，请按空格键）
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine introduction
  LoopInitiator loop_or loopType="TrialHandler"
    loopType = sequential
    nReps = 7
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    Routine four
    Routine five
    Routine six
    Routine seven
    Routine eight
    Routine nine
    Routine ten
    Routine eleven
  LoopTerminator loop_or
  Routine re_introduction
  LoopInitiator loop_re loopType="TrialHandler"
    loopType = sequential
    nReps = 7
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    Routine four_re
    Routine five_re
    Routine six_re
    Routine seven_re
    Routine eight_re
    Routine nine_re
    Routine ten_re
    Routine eleven_re
  LoopTerminator loop_re
  Routine thanks
