PsychoPy2experiment version="2021.2.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 第一次正误
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Routines
  Routine four
    TextComponent four_concentration
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent four_1
      letterHeight = 0.1
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      text = 8
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    TextComponent four_2
      letterHeight = 0.1
      pos = (-0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.3
      text = 1
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    TextComponent four_3
      letterHeight = 0.1
      pos = (0.1, 0)
      saveStartStop = False
      startVal [time (s)] = 1.1
      stopVal [duration (s)] = 0.3
      text = 7
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    TextComponent four_input
      letterHeight = 0.1
      startVal [time (s)] = 1.7
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import string
        allLetters = list(string.digits)
      Begin Experiment:
        textFill = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                four_input.setText(textFill)  # Set new text on screen
                if keys[0] == 'return':
                    textFill.strip()
                    thisExp.addData('four', textFill)
                    if textFill == '8174':
                        thisExp.addData('four_corr', 1)
                    else:
                        thisExp.addData('four_corr', 0)
                    four_input.setText(textFill)
                    continueRoutine = False
  Routine five
    TextComponent five_input
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        textFill = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                five_input.setText(textFill)  # Set new text on screen
                if keys[0] == 'return':
                    textFill.strip()
                    thisExp.addData('five', textFill)
                    if textFill == '81742':
                        thisExp.addData('five_corr', 1)
                    else:
                        thisExp.addData('five_corr', 0)
                    five_input.setText(textFill)
                    continueRoutine = False
  Routine instruction
    ImageComponent instruction_1
      image = image/introduction.png
      saveStartStop = False
      size = (1.76, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_instruction
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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Flow
  Routine instruction
  Routine four
  Routine five
