PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = trackMouse2
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Routines
  Routine trial
    CodeComponent JScode
      Code Type = JS
      Begin JS Experiment:
        Array.prototype.append = [].push;
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent trackMouse
      Code Type = Auto->JS
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      Begin Experiment:
        posList=[]
      Begin Routine:
        sameCount = 0
        sameThresh = 100
        sameWarning = 50
        thisCol = "green"
      Each Frame:
        posList.append(mouse.getPos())


        if len(posList) > 2:
            if posList[-1][0] == posList[-2][0]:
                if posList[-1][1] == posList[-2][1]:
                    print('same')
                    sameCount += 1
            else:
                thisCol = "green"
                sameCount = 0

        if sameCount >= sameWarning:
            thisCol = "red"
        if sameCount >= sameThresh:
            continueRoutine = False
            print(" mouse not moved for " + str(sameCount)+ " frames. Ending experiment")
      End Routine:
        print('POSITION LIST', posList)
        print('last pos', posList[-1][0],  posList[-1][1])
    TextComponent text
      color [set every frame] = $thisCol
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $"Mouse not moved for: " + str(sameCount) + " frames"
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    TextComponent currentMousePos
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $"Current pos: " +str(mouse.getPos())
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Flow
  Routine trial
