PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1536, 864]
  expName = textFill
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Routines
  Routine trial
    TextComponent screenText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    TextComponent cornerText
      letterHeight = 0.1
      pos = [.4, .4]
      startVal [time (s)] = 0.0
      wrapWidth = .5
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      text:
        Word List
        _________
    CodeComponent code
      Code Type = Auto->JS
      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase)
      Begin Routine:
        textFill = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                screenText.setText(textFill)  # Set new text on screen

                if keys[0] == 'return':
                    cornerText.setText(cornerText.text + '\n' + screenText.text)
                    textFill = ''
                    screenText.setText(textFill)
                    cornerText.setPos([.4, cornerText.pos[1] - (.056)])
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
