PsychoPy2experiment version="2021.2.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = AUT01Forum
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Routines
  Routine Instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 50.0
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      text:
        Instructions
    KeyboardComponent key_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Word
    CodeComponent code
      Code Type = Py
      Begin Routine:
        if Block.thisN == 0:
            leidy_timer = core.Clock()
      Each Frame:
        if t >= 30.0:
            Block.finished = True
            continueRoutine = False
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = Brick
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      correctAns = space
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      storeCorrect = True
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  Routine Vocalisation
    CodeComponent code_2
      Code Type = Py
      Each Frame:
        if  t >= 30.0: #30 because I do not want try with 180s yet.
            continueRoutine = False
            Block.finished = True
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = Please vocalise
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      correctAns = space
      forceEndRoutine = True
      startVal [time (s)] = .0
      stopVal [duration (s)] = 15
      storeCorrect = True
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  Routine NewWord
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      text = ready for the next word?
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SecondWord
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine SecondVocalisation
  Routine NewWord_2
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 50.0
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 50.0
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  Routine ThirdWord
  Routine ThirdVocalisation
Flow
  Routine Instructions
  LoopInitiator Block loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    Routine Word
    Routine Vocalisation
  LoopTerminator Block
  Routine NewWord
  LoopInitiator BlockTwo loopType="TrialHandler"
    loopType = random
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    Routine SecondWord
    Routine SecondVocalisation
  LoopTerminator BlockTwo
  Routine NewWord_2
  Routine ThirdWord
  Routine ThirdVocalisation
