PsychoPy2experiment version="2021.2.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = repeatexp
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Routines
  Routine Welcome
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = welcome!
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  Routine housekeeping
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        questionCounter = 0
  Routine imageTrial
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $image
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  Routine questionTrial
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    KeyboardComponent key_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        questionCounter = 0
      Each Frame:
        if "left" in key_resp.keys:
            print("left pressed")
            continueRoutine = False
            questionLoop.finished = True
        elif "return" in key_resp.keys:
            print("return pressed")
            print(key_resp.keys)
            questionCounter = questionCounter + 1
            continueRoutine = False
      End Routine:
        if questionCounter == len(questionLoop.trialList):
            repeatLoop.finished = True
  Routine Instructions1
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = instructions1
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  Routine instructions2
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = instructions2
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  Routine textTrial
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $text
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  Routine questionTrial2
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $questions2
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    KeyboardComponent key_resp_2
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        questionCounter = 0
      Each Frame:
        if "left" in key_resp.keys:
            print("left pressed")
            continueRoutine = False
            questionLoop2.finished = True
        elif "return" in key_resp.keys:
            print("return pressed")
            print(key_resp.keys)
            questionCounter = questionCounter + 1
            continueRoutine = False
      End Routine:
        if questionCounter == len(questionLoop.trialList):
            repeatLoop.finished = True
  Routine end
    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = thank you
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Flow
  Routine Welcome
  Routine Instructions1
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = random
    nReps = 200
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    Routine housekeeping
    LoopInitiator imageloop loopType="TrialHandler"
      conditionsFile = images.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'image': 'image1'},
        {'image': 'image2'},
        {'image': 'image3'}]
      Routine imageTrial
    LoopTerminator imageloop
    LoopInitiator questionLoop loopType="TrialHandler"
      conditionsFile = questions.xlsx
      loopType = random
      nReps = 5
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      conditions:
        [{'question': 'question1'},
        {'question': 'question2'},
        {'question': 'question3'}]
      Routine questionTrial
    LoopTerminator questionLoop
  LoopTerminator trials_4
  Routine instructions2
  LoopInitiator trials_5 loopType="TrialHandler"
    loopType = random
    nReps = 200
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    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = text.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'text': 'text1'},
        {'text': 'text2'},
        {'text': 'text3'}]
      Routine textTrial
    LoopTerminator trials_2
    LoopInitiator questionLoop2 loopType="TrialHandler"
      conditionsFile = Text2.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'Text2': 'text1'},
        {'Text2': 'text2'},
        {'Text2': 'text3'}]
      Routine questionTrial2
    LoopTerminator questionLoop2
  LoopTerminator trials_5
  Routine end
