PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', '姓名拼音': '', '男1/女2': '', '入院1/出院2': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = Facial_Emotion_Recognition_Formal
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Routines
  Routine ending
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = 测试结束，谢谢您的参与！
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  Routine trial1
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text = +
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    ImageComponent image
      image [set every repeat] = $pic1
      pos = (0, 0.2)
      size = (0.5,0.6)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 10.0
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 10.0
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      text:
        4.中性      5.悲伤      6.快乐
        1.愤怒      2.厌恶      3.恐惧
    KeyboardComponent key_resp_face_1
      allowedKeys = '1','2','3','4','5','6'
      correctAns = $j1
      forceEndRoutine = True
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 10.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine trial2
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text = +
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    ImageComponent image_2
      image [set every repeat] = $pic2
      pos = (0, 0.2)
      size = (0.5, 0.6)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 10.0
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 10.0
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      text:
        4.中性      5.悲伤      6.快乐
        1.愤怒      2.厌恶      3.恐惧
    KeyboardComponent key_resp_face_2
      allowedKeys = '1','2','3','4','5','6'
      correctAns = $j2
      forceEndRoutine = True
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 10.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine instruction1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加测试（正式部分）

        首先，屏幕中央会出现一个“+”，“+”消失后，
        屏幕中出现一张图片，请您判断图片中人物的
        情绪。

        （继续，请按空格键）
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction2
    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果为“愤怒”，则按下“1”键；
        如果为“厌恶”，则按下“2”键；
        如果为“恐惧”，则按下“3”键；
        如果为“中性”，则按下“4”键；
        如果为“悲伤”，则按下“5”键；
        如果为“快乐”，则按下“6”键。

        （继续，请按空格键）
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction3
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        答案没有对错之分，请根据您的判断
        作出及时反应。

        如果准备好了，请进入正式测试！

        （继续，请按空格键）
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine breaking2
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        第二部分结束啦！

        现在是休息阶段

        （继续，请按空格键）
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine breaking1
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        第一部分结束啦！

        现在是休息阶段

        （继续，请按空格键）
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial3
    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text = +
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    ImageComponent image_3
      image [set every repeat] = $pic1
      pos = (0, 0.2)
      size = (0.5, 0.6)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 10.0
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    TextComponent text_12
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 10.0
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      text:
        4.中性      5.悲伤      6.快乐
        1.愤怒      2.厌恶      3.恐惧
    KeyboardComponent key_resp_3
      allowedKeys = '1','2','3','4','5','6'
      correctAns = $j1
      forceEndRoutine = True
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 10.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine breaking3
    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        第三部分结束啦！

        现在是休息阶段

        （继续，请按空格键）
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial4
    TextComponent text_14
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text = +
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    ImageComponent image_4
      image [set every repeat] = $pic2
      pos = (0, 0.2)
      size = (0.5, 0.6)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 10.0
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    TextComponent text_15
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 10.0
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      text:
        4.中性      5.悲伤      6.快乐
        1.愤怒      2.厌恶      3.恐惧
    KeyboardComponent key_resp_8
      allowedKeys = '1','2','3','4','5','6'
      correctAns = $j2
      forceEndRoutine = True
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 10.0
      storeCorrect = True
      syncScreenRefresh = False
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Flow
  Routine instruction1
  Routine instruction2
  Routine instruction3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = documentation\loop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('pic1', 'image\\066_y_m_s_a.jpg'), ('s1', '悲伤'), ('j1', 5), ('m', 'a.jpg'), ('pic2', 'image\\140_y_f_s_b.jpg'), ('s2', '悲伤'), ('j2', 5), ('n', 'b.jpg')]),
      OrderedDict([('pic1', 'image\\004_o_m_s_a.jpg'), ('s1', '悲伤'), ('j1', 5), ('m', 'a.jpg'), ('pic2', 'image\\004_o_m_s_b.jpg'), ('s2', '悲伤'), ('j2', 5), ('n', 'b.jpg')]),
      OrderedDict([('pic1', 'image\\140_y_f_s_a.jpg'), ('s1', '悲伤'), ('j1', 5), ('m', 'a.jpg'), ('pic2', 'image\\116_m_m_s_b.jpg'), ('s2', '悲伤'), ('j2', 5), ('n', 'b.jpg')]),
      OrderedDict([('pic1', 'image\\168_m_f_s_a.jpg'), ('s1', '悲伤'), ('j1', 5), ('m', 'a.jpg'), ('pic2', 'image\\066_y_m_s_b.jpg'), ('s2', '悲伤'), ('j2', 5), ('n', 'b.jpg')]),
      OrderedDict([('pic1', 'image\\079_o_f_s_a.jpg'), ('s1', '悲伤'), ('j1', 5), ('m', 'a.jpg'), ('pic2', 'image\\168_m_f_s_b.jpg'), ('s2', '悲伤'), ('j2', 5), ('n', 'b.jpg')]),
      OrderedDict([('pic1', 'image\\116_m_m_s_a.jpg'), ('s1', '悲伤'), ('j1', 5), ('m', 'a.jpg'), ('pic2', 'image\\079_o_f_s_b.jpg'), ('s2', '悲伤'), ('j2', 5), ('n', 'b.jpg')]),
      OrderedDict([('pic1', 'image\\168_m_f_a_a.jpg'), ('s1', '愤怒'), ('j1', 1), ('m', 'a.jpg'), ('pic2', 'image\\168_m_f_a_b.jpg'), ('s2', '愤怒'), ('j2', 1), ('n', 'b.jpg')]),
      OrderedDict([('pic1', 'image\\004_o_m_a_a.jpg'), ('s1', '愤怒'), ('j1', 1), ('m', 'a.jpg'), ('pic2', 'image\\004_o_m_a_b.jpg'), ('s2', '愤怒'), ('j2', 1), ('n', 'b.jpg')])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
    Routine trial1
  LoopTerminator trials
  Routine breaking1
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = documentation\loop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('pic1', 'image\\066_y_m_s_a.jpg'), ('s1', '悲伤'), ('j1', 5), ('m', 'a.jpg'), ('pic2', 'image\\140_y_f_s_b.jpg'), ('s2', '悲伤'), ('j2', 5), ('n', 'b.jpg')]),
      OrderedDict([('pic1', 'image\\004_o_m_s_a.jpg'), ('s1', '悲伤'), ('j1', 5), ('m', 'a.jpg'), ('pic2', 'image\\004_o_m_s_b.jpg'), ('s2', '悲伤'), ('j2', 5), ('n', 'b.jpg')]),
      OrderedDict([('pic1', 'image\\140_y_f_s_a.jpg'), ('s1', '悲伤'), ('j1', 5), ('m', 'a.jpg'), ('pic2', 'image\\116_m_m_s_b.jpg'), ('s2', '悲伤'), ('j2', 5), ('n', 'b.jpg')]),
      OrderedDict([('pic1', 'image\\168_m_f_s_a.jpg'), ('s1', '悲伤'), ('j1', 5), ('m', 'a.jpg'), ('pic2', 'image\\066_y_m_s_b.jpg'), ('s2', '悲伤'), ('j2', 5), ('n', 'b.jpg')]),
      OrderedDict([('pic1', 'image\\079_o_f_s_a.jpg'), ('s1', '悲伤'), ('j1', 5), ('m', 'a.jpg'), ('pic2', 'image\\168_m_f_s_b.jpg'), ('s2', '悲伤'), ('j2', 5), ('n', 'b.jpg')]),
      OrderedDict([('pic1', 'image\\116_m_m_s_a.jpg'), ('s1', '悲伤'), ('j1', 5), ('m', 'a.jpg'), ('pic2', 'image\\079_o_f_s_b.jpg'), ('s2', '悲伤'), ('j2', 5), ('n', 'b.jpg')]),
      OrderedDict([('pic1', 'image\\168_m_f_a_a.jpg'), ('s1', '愤怒'), ('j1', 1), ('m', 'a.jpg'), ('pic2', 'image\\168_m_f_a_b.jpg'), ('s2', '愤怒'), ('j2', 1), ('n', 'b.jpg')]),
      OrderedDict([('pic1', 'image\\004_o_m_a_a.jpg'), ('s1', '愤怒'), ('j1', 1), ('m', 'a.jpg'), ('pic2', 'image\\004_o_m_a_b.jpg'), ('s2', '愤怒'), ('j2', 1), ('n', 'b.jpg')])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
    Routine trial2
  LoopTerminator trials_2
  Routine breaking2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = documentation\loop.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trial3
  LoopTerminator trials_3
  Routine breaking3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = documentation\loop.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trial4
  LoopTerminator trials_4
  Routine ending
