PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', '姓名拼音': '', '男1/女2': '', '入院1/出院2': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = Facial_Emotion_Recognition_Practice
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Routines
  Routine trial
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text = +
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    ImageComponent image
      image [set every repeat] = $pic
      pos = (0, 0.2)
      size = (0.5, 0.6)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 10.0
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 10.0
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      text:
        4.中性      5.悲伤      6.快乐
        1.愤怒      2.厌恶      3.恐惧
    KeyboardComponent key_resp_face
      allowedKeys = '1','2','3','4','5','6'
      correctAns = $j
      forceEndRoutine = True
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 10.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine instruction1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加我们的测试（练习部分）

        首先，屏幕中央会出现一个“+”，“+”消失后，
        屏幕中出现一张图片，请您判断图片中人物的
        情绪。

        （继续，请按空格键）
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果为“愤怒”，则按下“1”键；
        如果为“厌恶”，则按下“2”键；
        如果为“恐惧”，则按下“3”键；
        如果为“中性”，则按下“4”键；
        如果为“悲伤”，则按下“5”键；
        如果为“快乐”，则按下“6”键。

        （继续，请按空格键）
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction3
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        答案没有对错之分，请根据您的判断
        作出及时反应。

        如果准备好了，请开始练习！

        （继续，请按空格键）
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ending
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        练习结束！

        如果没有问题，请进入正式测试
Flow
  Routine instruction1
  Routine instruction2
  Routine instruction3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = documentation\loop_practice.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('pic', 'D:\\Facial Emotion Recognition\\image\\066_y_m_s_a.jpg'), ('s', '悲伤'), ('j', 5)]),
      OrderedDict([('pic', 'D:\\Facial Emotion Recognition\\image\\168_m_f_a_a.jpg'), ('s', '愤怒'), ('j', 1)]),
      OrderedDict([('pic', 'D:\\Facial Emotion Recognition\\image\\116_m_m_n_a.jpg'), ('s', '中性'), ('j', 4)]),
      OrderedDict([('pic', 'D:\\Facial Emotion Recognition\\image\\140_y_f_h_a.jpg'), ('s', '快乐'), ('j', 6)]),
      OrderedDict([('pic', 'D:\\Facial Emotion Recognition\\image\\004_o_m_d_a.jpg'), ('s', '厌恶'), ('j', 2)]),
      OrderedDict([('pic', 'D:\\Facial Emotion Recognition\\image\\079_o_f_f_b.jpg'), ('s', '恐惧'), ('j', 3)]),
      OrderedDict([('pic', 'D:\\Facial Emotion Recognition\\image\\168_m_f_n_b.jpg'), ('s', '中性'), ('j', 4)])]
    Routine trial
  LoopTerminator trials
  Routine ending
