PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', '姓名拼音': '', '男1/女2': '', '入院1/出院2': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = Dot_Probe_Formal
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Routines
  Routine trial
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text = +
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    ImageComponent image
      image [set every repeat] = $pic1
      pos = (-0.5, 0)
      size = (0.4, 0.48)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 1.0
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    ImageComponent image_2
      image [set every repeat] = $pic2
      pos = (0.5, 0)
      size = (0.4, 0.48)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 1.0
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    ImageComponent image_3
      image = image\black.jpg
      pos [set every repeat] = $p
      size = (0.08, 0.08)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp_trial_1
      allowedKeys = 'left','right'
      correctAns = $j
      forceEndRoutine = True
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 5.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine ending
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = 测试结束，谢谢您的参与！
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  Routine breaking
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        第一部分结束啦！

        现在是休息阶段

        （继续，请按空格键）
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial2
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text = +
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    ImageComponent image_4
      image [set every repeat] = $pic1
      pos = (-0.5, 0)
      size = (0.4, 0.48)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 1.0
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    ImageComponent image_5
      image [set every repeat] = $pic2
      pos = (0.5, 0)
      size = (0.4, 0.48)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 1.0
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    ImageComponent image_6
      image = image\black.jpg
      pos [set every repeat] = $p
      size = (0.08, 0.08)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp_trial_2
      allowedKeys = 'left','right'
      correctAns = $j
      forceEndRoutine = True
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 5.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine instruction1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加测试！

        （正式部分）

        首先，屏幕中央将会出现一个“+”，随后，
        屏幕上会呈现两张成左右分布的图片

        （继续，请按空格键）
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction2
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        紧接着，屏幕中将会出现一个黑色方块，请您
        准确且快速地判断它的位置。

        如果出现在左侧，请按左键，
        如果出现在右侧，请按右键。

        （继续，请按空格键）
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction3
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果准备好了，请进行正式测试。

        （继续，请按空格键）
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction1
  Routine instruction2
  Routine instruction3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = documentation\Loop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('pic1', 'D:\\Facial Emotion Recognition\\image\\168_m_f_s_b.jpg'), ('pic2', 'D:\\Facial Emotion Recognition\\image\\168_m_f_n_b.jpg'), ('p', [0.5, 0]), ('j', 'right'), ('id', 168), ('type1', 's_b'), ('type2', 'n_b')]),
      OrderedDict([('pic1', 'D:\\Facial Emotion Recognition\\image\\140_y_f_h_b.jpg'), ('pic2', 'D:\\Facial Emotion Recognition\\image\\140_y_f_n_b.jpg'), ('p', [0.5, 0]), ('j', 'right'), ('id', 140), ('type1', 'h_b'), ('type2', 'n_b')]),
      OrderedDict([('pic1', 'D:\\Facial Emotion Recognition\\image\\140_y_f_n_b.jpg'), ('pic2', 'D:\\Facial Emotion Recognition\\image\\140_y_f_s_b.jpg'), ('p', [-0.5, 0]), ('j', 'left'), ('id', 140), ('type1', 'n_b'), ('type2', 's_b')]),
      OrderedDict([('pic1', 'D:\\Facial Emotion Recognition\\image\\066_y_m_h_a.jpg'), ('pic2', 'D:\\Facial Emotion Recognition\\image\\066_y_m_n_a.jpg'), ('p', [-0.5, 0]), ('j', 'left'), ('id', 66), ('type1', 'h_a'), ('type2', 'n_a')]),
      OrderedDict([('pic1', 'D:\\Facial Emotion Recognition\\image\\116_m_m_s_b.jpg'), ('pic2', 'D:\\Facial Emotion Recognition\\image\\116_m_m_n_b.jpg'), ('p', [0.5, 0]), ('j', 'right'), ('id', 116), ('type1', 's_b'), ('type2', 'n_b')]),
      OrderedDict([('pic1', 'D:\\Facial Emotion Recognition\\image\\140_y_f_n_b.jpg'), ('pic2', 'D:\\Facial Emotion Recognition\\image\\140_y_f_h_b.jpg'), ('p', [0.5, 0]), ('j', 'right'), ('id', 140), ('type1', 'n_b'), ('type2', 'h_b')])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
    Routine trial
  LoopTerminator trials
  Routine breaking
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = documentation\Loop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('pic1', 'D:\\Facial Emotion Recognition\\image\\168_m_f_s_b.jpg'), ('pic2', 'D:\\Facial Emotion Recognition\\image\\168_m_f_n_b.jpg'), ('p', [0.5, 0]), ('j', 'right'), ('id', 168), ('type1', 's_b'), ('type2', 'n_b')]),
      OrderedDict([('pic1', 'D:\\Facial Emotion Recognition\\image\\140_y_f_h_b.jpg'), ('pic2', 'D:\\Facial Emotion Recognition\\image\\140_y_f_n_b.jpg'), ('p', [0.5, 0]), ('j', 'right'), ('id', 140), ('type1', 'h_b'), ('type2', 'n_b')]),
      OrderedDict([('pic1', 'D:\\Facial Emotion Recognition\\image\\140_y_f_n_b.jpg'), ('pic2', 'D:\\Facial Emotion Recognition\\image\\140_y_f_s_b.jpg'), ('p', [-0.5, 0]), ('j', 'left'), ('id', 140), ('type1', 'n_b'), ('type2', 's_b')]),
      OrderedDict([('pic1', 'D:\\Facial Emotion Recognition\\image\\066_y_m_h_a.jpg'), ('pic2', 'D:\\Facial Emotion Recognition\\image\\066_y_m_n_a.jpg'), ('p', [-0.5, 0]), ('j', 'left'), ('id', 66), ('type1', 'h_a'), ('type2', 'n_a')]),
      OrderedDict([('pic1', 'D:\\Facial Emotion Recognition\\image\\116_m_m_s_b.jpg'), ('pic2', 'D:\\Facial Emotion Recognition\\image\\116_m_m_n_b.jpg'), ('p', [0.5, 0]), ('j', 'right'), ('id', 116), ('type1', 's_b'), ('type2', 'n_b')]),
      OrderedDict([('pic1', 'D:\\Facial Emotion Recognition\\image\\140_y_f_n_b.jpg'), ('pic2', 'D:\\Facial Emotion Recognition\\image\\140_y_f_h_b.jpg'), ('p', [0.5, 0]), ('j', 'right'), ('id', 140), ('type1', 'n_b'), ('type2', 'h_b')])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
    Routine trial2
  LoopTerminator trials_2
  Routine ending
