PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', '姓名拼音': '', '男1/女2': '', '入院1/出院2': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = Dot_Probe_Practice
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Routines
  Routine ending
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        练习部分结束

        如果没有问题，请进入正式测试
  Routine trial2
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text = +
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    ImageComponent image_4
      image = image\140_y_f_h_b.jpg
      pos = (-0.5, 0)
      size = (0.4, 0.48)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 1.0
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    ImageComponent image_5
      image = image\140_y_f_n_b.jpg
      pos = (0.5, 0)
      size = (0.4, 0.48)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 1.0
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    ImageComponent image_86
      image = image\black.jpg
      pos = (0.5,0)
      size = (0.08, 0.08)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 5.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        B='判断错误'
      End Routine:
        if key_resp_4.keys=='right':
            B='判断正确'
        elif key_resp_4.keys=='left':
            B='判断错误'
  Routine trial4
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text = +
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    ImageComponent image_8
      image = image\066_y_m_h_a.jpg
      pos = (-0.5, 0)
      size = (0.4, 0.48)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 1.0
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    ImageComponent image_9
      image = image\066_y_m_n_a.jpg
      pos = (0.5, 0)
      size = (0.4, 0.48)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 1.0
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    ImageComponent image_88
      image = image\black.jpg
      pos = (-0.5,0)
      size = (0.08, 0.08)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 5.0
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    CodeComponent code_22
      Code Type = Auto->JS
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      Begin Experiment:
        D='判断错误'
      End Routine:
        if key_resp_6.keys=='left':
            D='判断正确'
        elif key_resp_6.keys=='right':
            D='判断错误'
  Routine trial5
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text = +
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    ImageComponent image_10
      image = image\116_m_m_s_b.jpg
      pos = (-0.5, 0)
      size = (0.4, 0.48)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 1.0
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    ImageComponent image_11
      image = image\116_m_m_n_b.jpg
      pos = (0.5, 0)
      size = (0.4, 0.48)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 1.0
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    ImageComponent image_89
      image = image\black.jpg
      pos = (0.5,0)
      size = (0.08, 0.08)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 5.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        E='判断错误'
      End Routine:
        if key_resp_7.keys=='right':
            E='判断正确'
        elif key_resp_7.keys=='left':
            E='判断错误'
  Routine trial10
    TextComponent text_12
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text = +
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    ImageComponent image_20
      image = image\140_y_f_n_a.jpg
      pos = (-0.5, 0)
      size = (0.4, 0.48)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 1.0
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    ImageComponent image_21
      image = image\140_y_f_h_a.jpg
      pos = (0.5, 0)
      size = (0.4, 0.48)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 1.0
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    ImageComponent image_94
      image = image\black.jpg
      pos = (-0.5,0)
      size = (0.08, 0.08)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp_12
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 5.0
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    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Experiment:
        J='判断错误'
      End Routine:
        if key_resp_12.keys=='left':
            J='判断正确'
        elif key_resp_12.keys=='right':
            J='判断错误'
  Routine trial1
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text = +
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    ImageComponent image
      image = image\168_m_f_s_b.jpg
      pos = (-0.5, 0)
      size = (0.4, 0.48)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 1.0
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    ImageComponent image_2
      image = image\168_m_f_n_b.jpg
      pos = (0.5, 0)
      size = (0.4, 0.48)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 1.0
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    ImageComponent image_3
      image = image\black.jpg
      pos = (0.5,0)
      size = (0.08, 0.08)
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 5.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        A='判断错误'
      End Routine:
        if key_resp_3.keys=='right':
            A='判断正确'
        elif key_resp_3.keys=='left':
            A='判断错误'
  Routine j1
    TextComponent text_45
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $A
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  Routine j2
    TextComponent text_87
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $B
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  Routine j4
    TextComponent text_89
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $D
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  Routine j5
    TextComponent text_46
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $E
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  Routine j10
    TextComponent text_51
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $J
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  Routine instruction1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加测试

        （练习部分）

        首先，屏幕中央将会出现一个“+”，随后，
        屏幕上会呈现两张成左右分布的图片

        （继续，请按空格键）
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction2
    TextComponent text_84
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        紧接着，屏幕中将会出现一个黑色方块，请您
        准确且快速地判断它的位置。

        如果出现在左侧，请按左键，
        如果出现在右侧，请按右键。

        （继续，请按空格键）
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction3
    TextComponent text_85
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果准备好了，请进行练习部分。

        （继续，请按空格键）
    KeyboardComponent key_resp_45
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction1
  Routine instruction2
  Routine instruction3
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine trial1
    Routine j1
    Routine trial2
    Routine j2
    Routine trial4
    Routine j4
    Routine trial5
    Routine j5
    Routine trial10
    Routine j10
  LoopTerminator trials
  Routine ending
