PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', '姓名拼音': '', '男1/女2': '', '入院1/出院2': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Go_Nogo_Formal
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Routines
  Routine introduction1
    TextComponent introduction_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加测试
        （正式部分）

        本测试分两种类型

        （继续，请按空格键）
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine introduction2
    TextComponent introduction_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        第一种类型

        测试开始时,屏幕中间会出现注视点“+”
        之后会出现不同类型的红绿灯图片

        如果为绿灯或者黄灯，请按下空格键
        如果为红灯，请不要按键

        （继续，请按空格键）
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine introduction3
    TextComponent introduction_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        第二种类型

        测试开始时,屏幕中间会出现注视点“+”
        之后会出现一个表情图片

        在每个表情图片出现时
        如果为快乐或者中性，请按下空格键
        如果为悲伤，请不要按键

        （继续，请按空格键）
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine introduction4
    TextComponent introduction_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果准备好了，请开始正式测试

        （继续，请按空格键）
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine tip1
    TextComponent tip_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在，测试第一种类型

        如果为绿灯或者黄灯，请按下空格键
        如果为红灯，请不要按键

        （继续，请按空格键）
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine light
    TextComponent concentration
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = +
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    ImageComponent image
      image [set every repeat] = $path1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_light
      allowedKeys = 'space'
      correctAns = $path1_corr
      forceEndRoutine = True
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine tip2
    TextComponent tip_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在，测试第二种类型

        在每个表情图片出现时
        如果为快乐或者中性，请按下空格键
        如果为悲伤，请不要按键

        （继续，请按空格键）
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine face
    TextComponent concentration2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = +
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    ImageComponent image_2
      image [set every repeat] = $path2
      size = (0.4, 0.5)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_face
      allowedKeys = 'space'
      correctAns = $path2_corr
      forceEndRoutine = True
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine thanks
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 测试结束，谢谢您的参与
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Flow
  Routine introduction1
  Routine introduction4
  Routine introduction2
  LoopInitiator loop_light1 loopType="TrialHandler"
    conditionsFile = documents\light.xlsx
    loopType = random
    nReps = 12
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    conditions:
      [OrderedDict([('path1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_light\\green.png')]),
      OrderedDict([('path1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_light\\green.png')]),
      OrderedDict([('path1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_light\\green.png')]),
      OrderedDict([('path1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_light\\green.png')]),
      OrderedDict([('path1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_light\\green.png')]),
      OrderedDict([('path1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_light\\green.png')]),
      OrderedDict([('path1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_light\\red.png')]),
      OrderedDict([('path1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_light\\yellow.png')])]
    Routine light
  LoopTerminator loop_light1
  Routine introduction3
  LoopInitiator loop_face1 loopType="TrialHandler"
    conditionsFile = documents\face.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\004_o_m_h_a.jpg')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\004_o_m_h_a.jpg')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\004_o_m_h_a.jpg')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\004_o_m_h_a.jpg')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\004_o_m_h_a.jpg')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\004_o_m_h_a.jpg')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\004_o_m_n_b.jpg')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\004_o_m_s_a.jpg')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\066_y_m_h_a.jpg')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\066_y_m_h_a.jpg')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\066_y_m_h_a.jpg')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\066_y_m_h_a.jpg')])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
    Routine face
  LoopTerminator loop_face1
  Routine tip1
  LoopInitiator loop_light2 loopType="TrialHandler"
    conditionsFile = documents\light.xlsx
    loopType = random
    nReps = 12
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    conditions:
      [OrderedDict([('path1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_light\\green.png')]),
      OrderedDict([('path1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_light\\green.png')]),
      OrderedDict([('path1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_light\\green.png')]),
      OrderedDict([('path1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_light\\green.png')]),
      OrderedDict([('path1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_light\\green.png')]),
      OrderedDict([('path1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_light\\green.png')]),
      OrderedDict([('path1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_light\\red.png')]),
      OrderedDict([('path1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_light\\yellow.png')])]
    Routine light
  LoopTerminator loop_light2
  Routine tip2
  LoopInitiator loop_face2 loopType="TrialHandler"
    conditionsFile = documents\face.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('path2', 'image\\image_face\\004_o_m_h_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\004_o_m_h_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\004_o_m_h_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\004_o_m_h_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\004_o_m_h_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\004_o_m_h_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\004_o_m_n_b.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\004_o_m_s_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\066_y_m_h_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\066_y_m_h_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\066_y_m_h_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\066_y_m_h_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\066_y_m_h_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\066_y_m_h_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\066_y_m_n_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\066_y_m_s_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\079_o_f_h_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\079_o_f_h_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\079_o_f_h_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\079_o_f_h_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\079_o_f_h_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\079_o_f_h_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\079_o_f_n_a.jpg')]),
      OrderedDict([('path2', 'image\\image_face\\079_o_f_s_a.jpg')])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
    Routine face
  LoopTerminator loop_face2
  Routine thanks
