PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', '姓名拼音': '', '男1/女2': '', '入院1/出院2': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Go_Nogo_Practice
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Routines
  Routine introduction1
    TextComponent introduction_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加测试
        （练习部分）

        本测试分两种类型

        （继续，请按空格键）
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine introduction2
    TextComponent introduction_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        第一种类型

        测试开始时,屏幕中间会出现注视点“+”
        之后会出现不同类型的红绿灯图片

        如果为绿灯或者黄灯，请按下空格键
        如果为红灯，请不要按键

        （继续，请按空格键）
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine introduction3
    TextComponent introduction_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        第二种类型

        测试开始时,屏幕中间会出现注视点“+”
        之后会出现一个表情图片

        在每个表情图片出现时
        如果为快乐或者中性，请按下空格键
        如果为悲伤，请不要按键

        （继续，请按空格键）
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine introduction4
    TextComponent introduction_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果准备好了，请开始练习

        （继续，请按空格键）
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine tip1
    TextComponent tip_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在，练习第一种类型

        如果为绿灯或者黄灯，请按下空格键
        如果为红灯，请不要按键

        （继续，请按空格键）
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback1
    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $x
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  Routine tip2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在，练习第二种类型

        在每个表情图片出现时
        如果为快乐或者中性，请按下空格键
        如果为悲伤，请不要按键

        （继续，请按空格键）
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine light
    TextComponent concentration
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = +
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    ImageComponent image
      image [set every repeat] = $path1
      size = (0.4, 0.5)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      correctAns = $path1_corr
      forceEndRoutine = True
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        x=""
      End Routine:
        if key_resp_6.corr:
            x="回答正确"
        else:
            x="回答错误"
  Routine face
    TextComponent concentration_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = +
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    ImageComponent image_2
      image [set every repeat] = $path2
      size = (0.4, 0.5)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      correctAns = $path2_corr
      forceEndRoutine = True
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        x2=" "
      End Routine:
        if key_resp_8.corr:
            x2="回答正确"
        else:
            x2="回答错误"
  Routine feedback2
    TextComponent text_3
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $x2
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  Routine thanks
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        练习结束，请开始正式测试。
Flow
  Routine introduction1
  Routine introduction4
  Routine introduction2
  LoopInitiator loop_light1 loopType="TrialHandler"
    conditionsFile = documents\light_practice.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [OrderedDict([('path1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_light\\green.png'), ('path1_corr', 'space')]),
      OrderedDict([('path1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_light\\red.png'), ('path1_corr', 'None')]),
      OrderedDict([('path1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_light\\yellow.png'), ('path1_corr', 'space')])]
    Routine light
    Routine feedback1
  LoopTerminator loop_light1
  Routine introduction3
  LoopInitiator loop_face loopType="TrialHandler"
    conditionsFile = documents\face_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\004_o_m_h_a.jpg'), ('path2_corr', 'space')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\004_o_m_n_b.jpg'), ('path2_corr', 'space')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\004_o_m_s_a.jpg'), ('path2_corr', 'None')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\066_y_m_h_a.jpg'), ('path2_corr', 'space')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\066_y_m_n_a.jpg'), ('path2_corr', 'space')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\066_y_m_s_a.jpg'), ('path2_corr', 'None')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\079_o_f_h_a.jpg'), ('path2_corr', 'space')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\079_o_f_n_a.jpg'), ('path2_corr', 'space')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\079_o_f_s_a.jpg'), ('path2_corr', 'None')]),
      OrderedDict([('path2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\go_nogo\\image\\image_face\\116_m_m_h_a.jpg'), ('path2_corr', 'space')])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
    Routine face
    Routine feedback2
  LoopTerminator loop_face
  Routine thanks
