PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', '姓名拼音': '', '男1/女2': '', '入院1/出院2': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Nback_formal
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Routines
  Routine introduction1
    TextComponent introduction0_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加测试

        本测试分三种类型
        现在是正式测试

        （继续，请按空格键）
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine introduction2
    TextComponent introduction_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        第一种类型

        测试开始时,屏幕中间会出现注视点“+”
        之后会连续出现一系列的数字

        在每个数字出现时
        您只需要按下空格键即可

        （继续，请按空格键）
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine introduction3
    TextComponent introduction_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        第二种类型

        测试开始时,屏幕中间会出现注视点“+”
        之后会连续出现一系列的数字

        从第二个数字出现时
        您需要判断该数字与上一个数字是否一致
        一致,请按左键; 不一致,请按右键

        （继续，请按空格键）
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine introduction4
    TextComponent introduction_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        第三种类型

        测试开始时,屏幕中间会出现注视点“+”
        之后会连续出现一系列的数字

        从第三个数字出现时
        您需要判断该数字与倒数第二个数字是否一致
        一致,请按左键; 不一致,请按右键

        （继续，请按空格键）
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introduction5
    TextComponent introduction_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果准备好了，开始正式测试

        （继续，请按空格键）
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tip1
    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        现在，测试第一种类型


        （继续，请按空格键）
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine _0back_pre
    TextComponent concentration1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine _0back
    TextComponent _0back_1
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $num1
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    KeyboardComponent key_resp_0back
      allowedKeys = 'space'
      correctAns = $num2_corr
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
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  Routine feedback_0
    TextComponent feedback0
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message0
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  Routine tip2
    TextComponent text_2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        现在，测试第二种类型

        （继续请按空格键）
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine _1back_pre
    TextComponent concentration2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent back1_pre
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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      text:
        2
  Routine _1back
    TextComponent back1_1
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $num2
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    KeyboardComponent key_resp_1back
      allowedKeys = 'left','right'
      correctAns = $num2_corr
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine feedback_1
    TextComponent feedback1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $message1
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  Routine tip3
    TextComponent text_3
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        现在，测试第三种类型

        （继续，请按空格键）
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine _2back_pre
    TextComponent concentration3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent back2_1
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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      text:
        1
    TextComponent back2_2
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1
      text = 4
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  Routine _2back
    TextComponent back2_3
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $num3
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    KeyboardComponent key_resp_2back
      allowedKeys = 'left','right'
      correctAns = $num3_corr
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine thanks
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 测试结束，谢谢您的参与
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Flow
  Routine introduction1
  Routine introduction5
  Routine tip1
  Routine introduction2
  Routine _0back_pre
  LoopInitiator loop_0back loopType="TrialHandler"
    conditionsFile = documents\document_0back.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('num1', 1)]),
      OrderedDict([('num1', 2)]),
      OrderedDict([('num1', 3)]),
      OrderedDict([('num1', 4)]),
      OrderedDict([('num1', 5)]),
      OrderedDict([('num1', 6)]),
      OrderedDict([('num1', 7)]),
      OrderedDict([('num1', 8)]),
      OrderedDict([('num1', 9)]),
      OrderedDict([('num1', 0)])]
    Routine _0back
  LoopTerminator loop_0back
  Routine tip2
  Routine introduction3
  Routine _1back_pre
  LoopInitiator loop_1back_1 loopType="TrialHandler"
    conditionsFile = documents\document_1back.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('num2', 2), ('num2_corr', 'left')]),
      OrderedDict([('num2', 1), ('num2_corr', 'right')]),
      OrderedDict([('num2', 4), ('num2_corr', 'right')]),
      OrderedDict([('num2', 5), ('num2_corr', 'right')]),
      OrderedDict([('num2', 5), ('num2_corr', 'left')]),
      OrderedDict([('num2', 7), ('num2_corr', 'right')]),
      OrderedDict([('num2', 9), ('num2_corr', 'right')]),
      OrderedDict([('num2', 6), ('num2_corr', 'right')]),
      OrderedDict([('num2', 6), ('num2_corr', 'left')]),
      OrderedDict([('num2', 6), ('num2_corr', 'left')]),
      OrderedDict([('num2', 2), ('num2_corr', 'right')]),
      OrderedDict([('num2', 2), ('num2_corr', 'left')]),
      OrderedDict([('num2', 3), ('num2_corr', 'right')]),
      OrderedDict([('num2', 3), ('num2_corr', 'left')]),
      OrderedDict([('num2', 3), ('num2_corr', 'left')]),
      OrderedDict([('num2', 8), ('num2_corr', 'right')]),
      OrderedDict([('num2', 8), ('num2_corr', 'left')]),
      OrderedDict([('num2', 8), ('num2_corr', 'left')]),
      OrderedDict([('num2', 9), ('num2_corr', 'right')]),
      OrderedDict([('num2', 9), ('num2_corr', 'left')]),
      OrderedDict([('num2', 2), ('num2_corr', 'right')]),
      OrderedDict([('num2', 2), ('num2_corr', 'left')]),
      OrderedDict([('num2', 1), ('num2_corr', 'right')]),
      OrderedDict([('num2', 4), ('num2_corr', 'right')]),
      OrderedDict([('num2', 5), ('num2_corr', 'right')]),
      OrderedDict([('num2', 5), ('num2_corr', 'left')]),
      OrderedDict([('num2', 7), ('num2_corr', 'right')]),
      OrderedDict([('num2', 9), ('num2_corr', 'right')]),
      OrderedDict([('num2', 6), ('num2_corr', 'right')]),
      OrderedDict([('num2', 6), ('num2_corr', 'left')])]
    Routine _1back
  LoopTerminator loop_1back_1
  Routine tip3
  Routine introduction4
  Routine _2back_pre
  LoopInitiator loop_2back_1 loopType="TrialHandler"
    conditionsFile = documents\document_2back.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('num3', 1), ('num3_corr', 'left')]),
      OrderedDict([('num3', 5), ('num3_corr', 'right')]),
      OrderedDict([('num3', 1), ('num3_corr', 'left')]),
      OrderedDict([('num3', 3), ('num3_corr', 'right')]),
      OrderedDict([('num3', 4), ('num3_corr', 'right')]),
      OrderedDict([('num3', 3), ('num3_corr', 'left')]),
      OrderedDict([('num3', 2), ('num3_corr', 'right')]),
      OrderedDict([('num3', 3), ('num3_corr', 'left')]),
      OrderedDict([('num3', 6), ('num3_corr', 'right')]),
      OrderedDict([('num3', 7), ('num3_corr', 'right')]),
      OrderedDict([('num3', 6), ('num3_corr', 'left')]),
      OrderedDict([('num3', 8), ('num3_corr', 'right')]),
      OrderedDict([('num3', 6), ('num3_corr', 'left')]),
      OrderedDict([('num3', 8), ('num3_corr', 'left')]),
      OrderedDict([('num3', 9), ('num3_corr', 'right')]),
      OrderedDict([('num3', 5), ('num3_corr', 'right')]),
      OrderedDict([('num3', 9), ('num3_corr', 'left')]),
      OrderedDict([('num3', 5), ('num3_corr', 'left')]),
      OrderedDict([('num3', 9), ('num3_corr', 'left')]),
      OrderedDict([('num3', 0), ('num3_corr', 'right')]),
      OrderedDict([('num3', 9), ('num3_corr', 'left')]),
      OrderedDict([('num3', 5), ('num3_corr', 'right')]),
      OrderedDict([('num3', 1), ('num3_corr', 'left')]),
      OrderedDict([('num3', 3), ('num3_corr', 'right')]),
      OrderedDict([('num3', 4), ('num3_corr', 'right')]),
      OrderedDict([('num3', 3), ('num3_corr', 'left')]),
      OrderedDict([('num3', 2), ('num3_corr', 'right')]),
      OrderedDict([('num3', 3), ('num3_corr', 'left')]),
      OrderedDict([('num3', 6), ('num3_corr', 'right')]),
      OrderedDict([('num3', 7), ('num3_corr', 'right')])]
    Routine _2back
  LoopTerminator loop_2back_1
  Routine tip2
  Routine introduction3
  Routine _1back_pre
  LoopInitiator loop_1back_2 loopType="TrialHandler"
    conditionsFile = documents\document_1back.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine _1back
  LoopTerminator loop_1back_2
  Routine tip3
  Routine introduction4
  Routine _2back_pre
  LoopInitiator loop_2back_2 loopType="TrialHandler"
    conditionsFile = documents\document_2back.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine _2back
  LoopTerminator loop_2back_2
  Routine thanks
