PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', '姓名拼音': '', '男1/女2': '', '入院1/出院2': ''}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Nback_Practice
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Routines
  Routine introduction1
    TextComponent introduction_1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        欢迎参加测试

        本测试分三种类型
        现在是练习部分

        （继续，请按空格键）
    KeyboardComponent introduction1_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine introduction2
    TextComponent introduction2_1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        第一种类型

        开始时,屏幕中间会出现注视点“+”
        之后会连续出现一系列的数字

        在每个数字出现时
        您只需要按下空格键即可

        （继续，请按空格键）
    KeyboardComponent introduction2_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine introduction3
    TextComponent introduction3_1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        第二种类型

        开始时,屏幕中间会出现注视点“+”
        之后会连续出现一系列的数字

        从第二个数字出现时
        您需要判断该数字与上一个数字是否一致
        一致,请按左键; 不一致,请按右键

        （继续，请按空格键）
    KeyboardComponent introduction3_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine introduction4
    TextComponent introduction4_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        第三种类型

        开始时,屏幕中间会出现注视点“+”
        之后会连续出现一系列的数字

        从第三个数字出现时
        您需要判断该数字与倒数二个数字是否一致
        一致,请按左键; 不一致,请按右键

        （继续，请按空格键）
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine _0back
    TextComponent back0_1
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $num1
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    KeyboardComponent key_resp0
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        message0=" "
      End Routine:
        if not key_resp0.keys:
            message0="请在三秒内按键"
  Routine _1back
    TextComponent back1_1
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $num2
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = $num2_corr
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        message1=0
      End Routine:
        if not key_resp_2.keys:
            message1="请在三秒内按键"
        else:
            if key_resp_2.corr:
                message1="回答正确"
            else:
                message1="回答错误"
  Routine _1back_pre
    TextComponent concentration1_pre
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent back1_pre
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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      text:
        2
        (无需作答)
  Routine feedback_1
    TextComponent feedback1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message1
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  Routine tip2
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在，练习第二种类型

        （继续请按空格键）
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine tip1
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在，练习第一种类型


        （继续，请按空格键）
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine tip3
    TextComponent tip_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在，练习第三种类型

        （继续，请按空格键）
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine _1back_pre_2
  Routine _2back_pre
    TextComponent concentration_pre
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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      text:
        1
        (无需作答)
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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      text:
        4
        (无需作答)
  Routine _2back
    TextComponent back2_1
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $num3
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      correctAns = $num3_corr
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        message2=" "
      End Routine:
        if not key_resp_3.keys:
            message2="请在三秒内按键"
        else:
            if key_resp_3.corr:
                message2="回答正确"
            else:
                message2="回答错误"
  Routine _0back_pre
    TextComponent concentration_pre1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine feedback_2
    TextComponent feedback2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message2
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  Routine thanks
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 练习结束，请开始正式测试
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  Routine introduction5
    TextComponent introduction_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果准备好了，请开始练习

        （继续，请按空格键）
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback_0
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message0
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Flow
  Routine introduction1
  Routine introduction5
  Routine tip1
  Routine introduction2
  Routine _0back_pre
  LoopInitiator loop_0back loopType="TrialHandler"
    conditionsFile = documents\document_0back_pre.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('num1', 1)]),
      OrderedDict([('num1', 2)]),
      OrderedDict([('num1', 4)]),
      OrderedDict([('num1', 3)]),
      OrderedDict([('num1', 5)]),
      OrderedDict([('num1', 6)]),
      OrderedDict([('num1', 7)]),
      OrderedDict([('num1', 8)])]
    Routine _0back
    Routine feedback_0
  LoopTerminator loop_0back
  Routine tip2
  Routine introduction3
  Routine _1back_pre
  LoopInitiator loop_1back loopType="TrialHandler"
    conditionsFile = documents\document_1back_pre.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('num2', 4), ('num2_corr', 'right')]),
      OrderedDict([('num2', 4), ('num2_corr', 'left')]),
      OrderedDict([('num2', 3), ('num2_corr', 'right')]),
      OrderedDict([('num2', 4), ('num2_corr', 'right')]),
      OrderedDict([('num2', 5), ('num2_corr', 'right')]),
      OrderedDict([('num2', 5), ('num2_corr', 'left')]),
      OrderedDict([('num2', 5), ('num2_corr', 'left')]),
      OrderedDict([('num2', 7), ('num2_corr', 'right')]),
      OrderedDict([('num2', 2), ('num2_corr', 'right')]),
      OrderedDict([('num2', 2), ('num2_corr', 'left')]),
      OrderedDict([('num2', 9), ('num2_corr', 'right')]),
      OrderedDict([('num2', 9), ('num2_corr', 'left')]),
      OrderedDict([('num2', 8), ('num2_corr', 'right')]),
      OrderedDict([('num2', 8), ('num2_corr', 'left')]),
      OrderedDict([('num2', 8), ('num2_corr', 'left')]),
      OrderedDict([('num2', 7), ('num2_corr', 'right')]),
      OrderedDict([('num2', 6), ('num2_corr', 'right')]),
      OrderedDict([('num2', 2), ('num2_corr', 'right')]),
      OrderedDict([('num2', 2), ('num2_corr', 'left')]),
      OrderedDict([('num2', 3), ('num2_corr', 'right')]),
      OrderedDict([('num2', 3), ('num2_corr', 'left')]),
      OrderedDict([('num2', 3), ('num2_corr', 'left')]),
      OrderedDict([('num2', 4), ('num2_corr', 'right')]),
      OrderedDict([('num2', 5), ('num2_corr', 'right')]),
      OrderedDict([('num2', 6), ('num2_corr', 'right')]),
      OrderedDict([('num2', 6), ('num2_corr', 'left')]),
      OrderedDict([('num2', 7), ('num2_corr', 'right')]),
      OrderedDict([('num2', 7), ('num2_corr', 'left')]),
      OrderedDict([('num2', 7), ('num2_corr', 'left')]),
      OrderedDict([('num2', 8), ('num2_corr', 'right')])]
    Routine _1back
    Routine feedback_1
  LoopTerminator loop_1back
  Routine tip3
  Routine introduction4
  Routine _2back_pre
  LoopInitiator loop2back loopType="TrialHandler"
    conditionsFile = documents\document_2back_pre.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('num3', 1), ('num3_corr', 'left')]),
      OrderedDict([('num3', 4), ('num3_corr', 'left')]),
      OrderedDict([('num3', 5), ('num3_corr', 'right')]),
      OrderedDict([('num3', 7), ('num3_corr', 'right')]),
      OrderedDict([('num3', 5), ('num3_corr', 'left')]),
      OrderedDict([('num3', 7), ('num3_corr', 'left')]),
      OrderedDict([('num3', 8), ('num3_corr', 'right')]),
      OrderedDict([('num3', 5), ('num3_corr', 'right')]),
      OrderedDict([('num3', 5), ('num3_corr', 'right')]),
      OrderedDict([('num3', 5), ('num3_corr', 'left')]),
      OrderedDict([('num3', 4), ('num3_corr', 'right')]),
      OrderedDict([('num3', 9), ('num3_corr', 'right')]),
      OrderedDict([('num3', 4), ('num3_corr', 'left')]),
      OrderedDict([('num3', 8), ('num3_corr', 'right')]),
      OrderedDict([('num3', 6), ('num3_corr', 'right')]),
      OrderedDict([('num3', 8), ('num3_corr', 'left')]),
      OrderedDict([('num3', 6), ('num3_corr', 'left')]),
      OrderedDict([('num3', 3), ('num3_corr', 'right')]),
      OrderedDict([('num3', 6), ('num3_corr', 'left')]),
      OrderedDict([('num3', 9), ('num3_corr', 'right')]),
      OrderedDict([('num3', 1), ('num3_corr', 'right')]),
      OrderedDict([('num3', 2), ('num3_corr', 'right')]),
      OrderedDict([('num3', 1), ('num3_corr', 'left')]),
      OrderedDict([('num3', 2), ('num3_corr', 'left')]),
      OrderedDict([('num3', 4), ('num3_corr', 'right')]),
      OrderedDict([('num3', 2), ('num3_corr', 'left')]),
      OrderedDict([('num3', 6), ('num3_corr', 'right')]),
      OrderedDict([('num3', 2), ('num3_corr', 'left')]),
      OrderedDict([('num3', 7), ('num3_corr', 'right')]),
      OrderedDict([('num3', 2), ('num3_corr', 'left')])]
    Routine _2back
    Routine feedback_2
  LoopTerminator loop2back
  Routine thanks
