PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', '姓名拼音': '', '男1/女2': '', '入院1/出院2': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Stroop
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Routines
  Routine trial1
    TextComponent preparation1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent character1
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      text [set every repeat] = $characters
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    KeyboardComponent key_resp
      allowedKeys = 'right','left','up'
      correctAns = $corresp
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      storeCorrect = True
      syncScreenRefresh = False
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  Routine rest
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在是休息阶段

        （继续，请按空格键）
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial2
    TextComponent preparation2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent character2
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      text [set every repeat] = $characters
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right','up'
      correctAns = $corresp
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      storeCorrect = True
      syncScreenRefresh = False
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  Routine thanks
    TextComponent thank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 测试结束，谢谢您的参与。
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  Routine preparation
    TextComponent preparation3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = +
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    TextComponent character_pre
      color [set every repeat] = $color
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
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      text [set every repeat]:
        $characters
    KeyboardComponent key_resp_5
      allowedKeys = 'left','right','up'
      correctAns = $corresp
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        text3=0
        m=0
        n=0
      End Routine:
        if key_resp_5.corr:
            text3='回答正确'
            n+=1
        else:
            text3='回答错误'
  Routine justice
    TextComponent choose
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        感觉自己熟悉了吗？

        如果不熟悉，请按左键，继续练习
        如果已经熟悉，请按右键，开始正式实验
    KeyboardComponent key_resp_6
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if 'right'in key_resp_6.keys:
            loop3.finished=True
  Routine consequence1
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $text3
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  Routine consequence2
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $text4
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  Routine consequence3
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $text5
  Routine accuracy1
    TextComponent text_6
      letterHeight = 0.1
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      text = 你的正确率为：
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    TextComponent text_7
      letterHeight = 0.1
      pos [set every repeat] = (0.2, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $m
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    TextComponent text_8
      letterHeight = 0.1
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = 请按下空格键继续
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        m=n/20.0
  Routine introduction1
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加测试

        （继续，请按空格键）
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction2
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        接下来你将看到红、黄、蓝三种颜色的字。

        （继续，请按空格键）
    KeyboardComponent startbutton
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction3
    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果字颜色为红色，按下键盘左键
        如果字颜色为黄色，按下键盘上键
        如果字颜色为蓝色，按下键盘右键

        （继续，请按空格键）
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine introduction4
    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        下面是练习阶段

        （继续，请按空格键）
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine tip1
    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        下面进入正式测试

        （继续，请按空格键）
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine introduction1
  Routine instruction2
  Routine instruction3
  Routine introduction4
  LoopInitiator loop3 loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = documents\trial1.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('characters', '绿'), ('color', 'red'), ('corresp', 'left')]),
        OrderedDict([('characters', '蓝'), ('color', 'blue'), ('corresp', 'right')]),
        OrderedDict([('characters', '红'), ('color', 'blue'), ('corresp', 'right')]),
        OrderedDict([('characters', '黄'), ('color', 'red'), ('corresp', 'left')]),
        OrderedDict([('characters', '紫'), ('color', 'yellow'), ('corresp', 'up')]),
        OrderedDict([('characters', '黄'), ('color', 'yellow'), ('corresp', 'up')]),
        OrderedDict([('characters', '蓝'), ('color', 'red'), ('corresp', 'left')]),
        OrderedDict([('characters', '黑'), ('color', 'blue'), ('corresp', 'right')]),
        OrderedDict([('characters', '红'), ('color', 'red'), ('corresp', 'left')]),
        OrderedDict([('characters', '白'), ('color', 'yellow'), ('corresp', 'up')])]
      Routine preparation
      Routine consequence1
    LoopTerminator trials
    Routine justice
  LoopTerminator loop3
  Routine tip1
  LoopInitiator loop1 loopType="TrialHandler"
    conditionsFile = documents\trial2.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('characters', '红'), ('color', 'red'), ('corresp', 'left')]),
      OrderedDict([('characters', '红'), ('color', 'blue'), ('corresp', 'right')]),
      OrderedDict([('characters', '红'), ('color', 'yellow'), ('corresp', 'up')]),
      OrderedDict([('characters', '蓝'), ('color', 'blue'), ('corresp', 'right')]),
      OrderedDict([('characters', '蓝'), ('color', 'red'), ('corresp', 'left')]),
      OrderedDict([('characters', '蓝'), ('color', 'yellow'), ('corresp', 'up')]),
      OrderedDict([('characters', '黄'), ('color', 'yellow'), ('corresp', 'up')]),
      OrderedDict([('characters', '黄'), ('color', 'blue'), ('corresp', 'right')]),
      OrderedDict([('characters', '黄'), ('color', 'red'), ('corresp', 'left')]),
      OrderedDict([('characters', '张'), ('color', 'blue'), ('corresp', 'right')]),
      OrderedDict([('characters', '张'), ('color', 'red'), ('corresp', 'left')]),
      OrderedDict([('characters', '张'), ('color', 'yellow'), ('corresp', 'up')])]
    Routine trial1
  LoopTerminator loop1
  Routine rest
  LoopInitiator loop2 loopType="TrialHandler"
    conditionsFile = documents\trial2.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('characters', '红'), ('color', 'red'), ('corresp', 'left')]),
      OrderedDict([('characters', '鼠'), ('color', 'blue'), ('corresp', 'right')]),
      OrderedDict([('characters', '黄'), ('color', 'red'), ('corresp', 'left')]),
      OrderedDict([('characters', '蓝'), ('color', 'blue'), ('corresp', 'right')]),
      OrderedDict([('characters', '兔'), ('color', 'blue'), ('corresp', 'right')]),
      OrderedDict([('characters', '黄'), ('color', 'yellow'), ('corresp', 'up')]),
      OrderedDict([('characters', '蓝'), ('color', 'yellow'), ('corresp', 'up')]),
      OrderedDict([('characters', '猫'), ('color', 'blue'), ('corresp', 'right')]),
      OrderedDict([('characters', '蓝'), ('color', 'red'), ('corresp', 'left')]),
      OrderedDict([('characters', '黄'), ('color', 'blue'), ('corresp', 'right')])]
    Routine trial2
  LoopTerminator loop2
  Routine thanks
