PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', '姓名拼音': '', '男1/女2': '', '入院1/出院2': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Scene_Recognition_Task_formal
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Routines
  Routine instuction1
    TextComponent instruction1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加测试
        （正式部分）

        本测试分三种类型

        （继续，请按空格键）
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instuction2
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image
      image = image\instrimage\the_first.png
      size = (1.4, 0.8)
      startVal [time (s)] = 0.0
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  Routine instruction3
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent instruction_1
      image = image\instrimage\the_second.png
      size = (1.4, 0.8)
      startVal [time (s)] = 0.0
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  Routine instruction4
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_2
      image = image\instrimage\the_third.png
      size = (1.4,0.8)
      startVal [time (s)] = 0.0
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  Routine tip1
    TextComponent tip_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在开始，第一种类型测试

        （继续，请按空格键）
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine formal1
    TextComponent concentration1_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent formal1_1
      image [set every repeat] = $study1
      size = (0.52,0.4)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4
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    ImageComponent formal1_2
      image [set every repeat] = $path1_1
      pos = (-0.3, 0)
      size = (0.52, 0.4)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 10
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    ImageComponent formal1_3
      image [set every repeat] = $path1_2
      pos = (0.3, 0)
      size = (0.52, 0.4)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp_formal1
      allowedKeys = 'left','right'
      correctAns = $corresp1
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine tip2
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        第二种类型

        （继续，请按空格键）
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine formal2
    TextComponent concentration2_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image2_1
      image [set every repeat] = $study2
      size = (0.52, 0.4)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4
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    ImageComponent image2_2
      image [set every repeat] = $path2_1
      pos = (-0.3, 0)
      size = (0.52, 0.4)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 10
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    ImageComponent image2_3
      image [set every repeat] = $path2_2
      pos = (0.3, 0)
      size = (0.52, 0.4)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp_formal2
      allowedKeys = 'left','right'
      correctAns = $corresp2
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine tip3
    TextComponent tip_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        第三种类型

        （继续，请按空格键）
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine formal3
    TextComponent concentration3_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image3_1
      image [set every repeat] = $study3
      size = (0.52, 0.4)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4
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    ImageComponent image3_2
      image [set every repeat] = $path3_1
      pos = (-0.3, 0)
      size = (0.52, 0.4)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 10
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    ImageComponent image3_3
      image [set every repeat] = $path3_2
      pos = (0.3, 0)
      size = (0.52, 0.4)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp_formal3
      allowedKeys = 'left','right'
      correctAns = $corresp3
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 10
      storeCorrect = True
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  Routine thanks
    TextComponent text_2
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 测试结束，谢谢您的参与
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  Routine instruction5
    TextComponent instruction_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果准备好了，请开始测试

        （继续请按空格键）
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instuction1
  Routine instruction5
  Routine tip1
  Routine instuction2
  LoopInitiator loop_condition1 loopType="TrialHandler"
    conditionsFile = documents\formal_condition1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('c1', 'scene_cognitive_task\\imagine\\flimage\\0102.jpg'), ('c2', 'scene_cognitive_task\\imagine\\flimage\\0101.jpg'), ('corresp1', 'left'), ('path1_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0102.jpg'), ('path1_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0101.jpg'), ('study1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0101.jpg')]),
      OrderedDict([('c1', 'scene_cognitive_task\\imagine\\flimage\\0201.jpg'), ('c2', 'scene_cognitive_task\\imagine\\flimage\\0202.jpg'), ('corresp1', 'right'), ('path1_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0201.jpg'), ('path1_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0202.jpg'), ('study1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0201.jpg')]),
      OrderedDict([('c1', 'scene_cognitive_task\\imagine\\flimage\\0302.jpg'), ('c2', 'scene_cognitive_task\\imagine\\flimage\\0301.jpg'), ('corresp1', 'right'), ('path1_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0302.jpg'), ('path1_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0301.jpg'), ('study1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0301.jpg')]),
      OrderedDict([('c1', 'scene_cognitive_task\\imagine\\flimage\\0402.jpg'), ('c2', 'scene_cognitive_task\\imagine\\flimage\\0401.jpg'), ('corresp1', 'right'), ('path1_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0402.jpg'), ('path1_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0401.jpg'), ('study1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0401.jpg')])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
    Routine formal1
  LoopTerminator loop_condition1
  Routine tip2
  Routine instruction3
  LoopInitiator loop_condition2 loopType="TrialHandler"
    conditionsFile = documents\formal_condition2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('corresp2', 'left'), ('path2_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0103.jpg'), ('path2_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0105.jpg'), ('study2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0101.jpg')]),
      OrderedDict([('corresp2', 'right'), ('path2_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0205.jpg'), ('path2_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0203.jpg'), ('study2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0201.jpg')]),
      OrderedDict([('corresp2', 'right'), ('path2_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0305.jpg'), ('path2_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0303.jpg'), ('study2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0301.jpg')]),
      OrderedDict([('corresp2', 'left'), ('path2_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0403.jpg'), ('path2_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0405.jpg'), ('study2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0401.jpg')])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
    Routine formal2
  LoopTerminator loop_condition2
  Routine tip3
  Routine instruction4
  LoopInitiator loop_condition3 loopType="TrialHandler"
    conditionsFile = documents\formal_condition3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('corresp3', 'left'), ('path3_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0103.jpg'), ('path3_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0104.jpg'), ('study3', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0101.jpg')]),
      OrderedDict([('corresp3', 'right'), ('path3_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0204.jpg'), ('path3_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0203.jpg'), ('study3', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0201.jpg')]),
      OrderedDict([('corresp3', 'right'), ('path3_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0304.jpg'), ('path3_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0303.jpg'), ('study3', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0301.jpg')]),
      OrderedDict([('corresp3', 'left'), ('path3_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0403.jpg'), ('path3_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0404.jpg'), ('study3', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\imagine\\flimage\\0401.jpg')])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
    Routine formal3
  LoopTerminator loop_condition3
  Routine thanks
