PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', '姓名拼音': '', '男1/女2': '', '入院1/出院2': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Scene_Recognition_Task_Practice
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Routines
  Routine introduction1
    TextComponent instruction_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加测试
        （练习部分）

        本测试分三种类型

        （继续，请按空格键）
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction2
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image
      image = image\instrimage\the_first.png
      size = (1.4, 0.8)
      startVal [time (s)] = 0.0
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  Routine instruction3
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_2
      image = image\instrimage\the_second.png
      size = (1.4, 0.8)
      startVal [time (s)] = 0.0
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  Routine instruction4
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_3
      image = image\instrimage\the_third.png
      size = (1.4, 0.8)
      startVal [time (s)] = 0.0
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  Routine instruction5
    TextComponent instruction_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果准备好了，请开始练习

        （继续请按空格键）
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine tip1
    TextComponent tip_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在开始，第一种类型练习


        （继续，请按空格键）
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice1
    TextComponent concentration1_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image1_1
      image [set every repeat] = $study1
      size = (0.52, 0.4)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4
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    ImageComponent image1_2
      image [set every repeat] = $path1_1
      pos = (-0.3, 0)
      size = (0.52, 0.4)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 10
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    ImageComponent image1_3
      image [set every repeat] = $path1_2
      pos = (0.3, 0)
      size = (0.52, 0.4)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp_7
      allowedKeys = 'left','right'
      correctAns = $corresp1
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 10
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        message1=""
      End Routine:
        if key_resp_7.corr:
            message1="回答正确"
        else:
            message1="回答错误"
        if not key_resp_7.keys:
            message1="请在十秒内按键"
  Routine feedback1
    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message1
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  Routine tip2
    TextComponent tip_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在，开始第二种类型练习

        （继续，请按空格键）
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice2
    TextComponent concentration2_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image2_1
      image [set every repeat] = $study2
      size = (0.52, 0.4)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4
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    ImageComponent image2_2
      image [set every repeat] = $path2_1
      pos = (-0.3, 0)
      size = (0.52, 0.4)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 10
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    ImageComponent image2_3
      image [set every repeat] = $path2_2
      pos = (0.3, 0)
      size = (0.52, 0.4)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp_9
      allowedKeys = 'left','right'
      correctAns = $corresp2
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 10
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        message2=""
      End Routine:
        if key_resp_9.corr:
            message2="回答正确"
        else:
            message2="回答错误"
        if not key_resp_9.keys:
            message2="请在十秒内按键"
  Routine feedback2
    TextComponent text_2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message2
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  Routine tip3
    TextComponent tip_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在，开始第三种类型练习

        （继续，请按空格键）
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice3
    TextComponent concentration3_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image3_1
      image [set every repeat] = $study3
      size = (0.52, 0.4)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4
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    ImageComponent image3_2
      image [set every repeat] = $path3_1
      pos = (-0.3, 0)
      size = (0.52, 0.4)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 10
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    ImageComponent image3_3
      image [set every repeat] = $path3_2
      pos = (0.3, 0)
      size = (0.52, 0.4)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp_11
      allowedKeys = 'left','right'
      correctAns = $corresp3
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 10
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        message3=""
      End Routine:
        if key_resp_11.corr:
            message3="回答正确"
        else:
            message3="回答错误"
        if not key_resp_11.keys:
            message3="请在十秒内按键"
  Routine feedback3
    TextComponent text_3
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message3
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  Routine thanks
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 练习结束，请开始正式测试
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Flow
  Routine introduction1
  Routine instruction5
  Routine tip1
  Routine instruction2
  LoopInitiator loop_practice1 loopType="TrialHandler"
    conditionsFile = documents\practice_condition1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('study1', 'image\\PracImage1\\2101.jpg'), ('path1_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2102.jpg'), ('path1_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2101.jpg'), ('corresp1', 'right')]),
      OrderedDict([('study1', 'image\\PracImage1\\2201.jpg'), ('path1_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2201.jpg'), ('path1_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2202.jpg'), ('corresp1', 'left')]),
      OrderedDict([('study1', 'image\\PracImage1\\2301.jpg'), ('path1_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2302.jpg'), ('path1_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2301.jpg'), ('corresp1', 'right')]),
      OrderedDict([('study1', 'image\\PracImage1\\2401.jpg'), ('path1_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2401.jpg'), ('path1_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2402.jpg'), ('corresp1', 'left')])]
    Routine practice1
    Routine feedback1
  LoopTerminator loop_practice1
  Routine tip2
  Routine instruction3
  LoopInitiator loop_practice2 loopType="TrialHandler"
    conditionsFile = documents\practice_condition2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('study2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2101.jpg'), ('path2_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2105.jpg'), ('path2_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2103.jpg'), ('corresp2', 'right')]),
      OrderedDict([('study2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2201.jpg'), ('path2_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2203.jpg'), ('path2_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2205.jpg'), ('corresp2', 'left')]),
      OrderedDict([('study2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2301.jpg'), ('path2_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2305.jpg'), ('path2_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2303.jpg'), ('corresp2', 'right')]),
      OrderedDict([('study2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2401.jpg'), ('path2_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2403.jpg'), ('path2_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2405.jpg'), ('corresp2', 'left')])]
    Routine practice2
    Routine feedback2
  LoopTerminator loop_practice2
  Routine tip3
  Routine instruction4
  LoopInitiator loop_practice3 loopType="TrialHandler"
    conditionsFile = documents\practice_condition3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('study3', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2101.jpg'), ('path3_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2104.jpg'), ('path3_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2103.jpg'), ('corresp3', 'right')]),
      OrderedDict([('study3', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2201.jpg'), ('path3_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2203.jpg'), ('path3_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2204.jpg'), ('corresp3', 'left')]),
      OrderedDict([('study3', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2301.jpg'), ('path3_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2304.jpg'), ('path3_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2303.jpg'), ('corresp3', 'right')]),
      OrderedDict([('study3', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2401.jpg'), ('path3_1', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2403.jpg'), ('path3_2', 'C:\\Users\\zhang\\Desktop\\张以昊\\课题组\\psychopy\\scene_cognitive_task\\image\\PracImage1\\2404.jpg'), ('corresp3', 'left')])]
    Routine practice3
    Routine feedback3
  LoopTerminator loop_practice3
  Routine thanks
