PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', '姓名拼音': '', '男1/女2': '', '入院1/出院2': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = Flanker
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Routines
  Routine trial
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $P
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 2.0
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $j
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.2
      storeCorrect = True
      syncScreenRefresh = False
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  Routine instruction1
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加测试！

        练习部分

        （继续，请按空格键）
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction2
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        首先，屏幕中央将会呈现一个“+”，随后，
        会出现五个箭头

        请判断位于中间位置的箭头方向

        （2秒之内作出反应）

        如果箭头指向左，则按下左键；
        如果箭头指向右，则按下右键；

        （继续，请按空格键）
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial2_2
  Routine trial2
  Routine start
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = $s
      stopVal [duration (s)] = 1.0
      text = +
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  Routine ending
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = 测试结束，谢谢您的参与！
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  Routine practice1
    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.2
      text = <<<<<
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    TextComponent text_10
      letterHeight = 0.1
      startVal [time (s)] = 1.7
      stopVal [duration (s)] = 2.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = left
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2.2
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        A='判断错误'
      End Routine:
        if key_resp_2.keys=='right':
            A='判断错误'
        elif key_resp_2.keys=='left':
            A='判断正确'
  Routine instruction
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        练习部分结束！

        如果准备好了，请进行正式测试。

        （继续，请按空格键）
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine j1
    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $A
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  Routine practice2
    TextComponent text_12
      letterHeight = 0.1
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent text_13
      letterHeight = 0.1
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 0.2
      text = <<><<
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    TextComponent text_14
      letterHeight = 0.1
      startVal [time (s)] = 2.7
      stopVal [duration (s)] = 2.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'left','right'
      correctAns = right
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 2.2
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        B='判断错误'
      End Routine:
        if key_resp_6.keys=='right':
            B='判断正确'
        elif key_resp_6.keys=='left':
            B='判断错误'
  Routine j2
    TextComponent text_15
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $B
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  Routine practice3
    TextComponent text_16
      letterHeight = 0.1
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent text_17
      letterHeight = 0.1
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 0.2
      text = >>>>>
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    TextComponent text_18
      letterHeight = 0.1
      startVal [time (s)] = 1.95
      stopVal [duration (s)] = 2.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'left','right'
      correctAns = right
      forceEndRoutine = True
      startVal [time (s)] = 1.75
      stopVal [duration (s)] = 2.2
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        C='判断错误'
      End Routine:
        if key_resp_7.keys=='right':
            C='判断正确'
        elif key_resp_7.keys=='left':
            C='判断错误'
  Routine j3
    TextComponent text_19
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $C
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  Routine practice4
    TextComponent text_20
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent text_21
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.2
      text = >><>>
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    TextComponent text_22
      letterHeight = 0.1
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 2.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'left','right'
      correctAns = left
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 2.2
      storeCorrect = True
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        D='判断错误'
      End Routine:
        if key_resp_2.keys=='right':
            D='判断错误'
        elif key_resp_2.keys=='left':
            D='判断正确'
  Routine j4
    TextComponent text_23
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $D
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  Routine instruction3
    TextComponent text_24
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果准备好了，请开始练习

        （继续，请按空格键）
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction1
  Routine instruction2
  Routine instruction3
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator trials_3 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine practice1
      Routine j1
    LoopTerminator trials_3
    LoopInitiator trials_4 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine practice2
      Routine j2
    LoopTerminator trials_4
    LoopInitiator trials_5 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine practice3
      Routine j3
    LoopTerminator trials_5
    LoopInitiator trials_6 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine practice4
      Routine j4
    LoopTerminator trials_6
  LoopTerminator trials_2
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = documentation\Loop.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [OrderedDict([('P', '>><>>'), ('j', 'left'), ('s', 0.5)]),
      OrderedDict([('P', '>>>>>'), ('j', 'right'), ('s', 0.75)]),
      OrderedDict([('P', '<<><<'), ('j', 'right'), ('s', 0.5)]),
      OrderedDict([('P', '<<><<'), ('j', 'right'), ('s', 0.75)]),
      OrderedDict([('P', '>><>>'), ('j', 'left'), ('s', 1.5)]),
      OrderedDict([('P', '>><>>'), ('j', 'left'), ('s', 1.0)]),
      OrderedDict([('P', '>>>>>'), ('j', 'right'), ('s', 1.5)]),
      OrderedDict([('P', '<<><<'), ('j', 'right'), ('s', 1.5)]),
      OrderedDict([('P', '>><>>'), ('j', 'left'), ('s', 1.0)]),
      OrderedDict([('P', '<<<<<'), ('j', 'left'), ('s', 0.75)]),
      OrderedDict([('P', '>>>>>'), ('j', 'right'), ('s', 1.0)]),
      OrderedDict([('P', '<<<<<'), ('j', 'left'), ('s', 0.5)]),
      OrderedDict([('P', '>>>>>'), ('j', 'right'), ('s', 1.25)]),
      OrderedDict([('P', '>>>>>'), ('j', 'right'), ('s', 1.5)]),
      OrderedDict([('P', '<<><<'), ('j', 'right'), ('s', 0.75)]),
      OrderedDict([('P', '<<<<<'), ('j', 'left'), ('s', 1.0)]),
      OrderedDict([('P', '>><>>'), ('j', 'left'), ('s', 1.5)]),
      OrderedDict([('P', '<<<<<'), ('j', 'left'), ('s', 1.25)]),
      OrderedDict([('P', '<<><<'), ('j', 'right'), ('s', 1.0)]),
      OrderedDict([('P', '<<<<<'), ('j', 'left'), ('s', 1.25)])]
    Routine start
    Routine trial
  LoopTerminator trials
  Routine ending
