PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', '姓名拼音': '', '男1/女2': '', '入院1/出院2': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Task_Switching_Formal
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Routines
  Routine instruction1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加测试
        （正式测试）

        （继续，请按空格键）
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        首先屏幕会出现一个注视点"+"
        之后会出现一个正方形图片

        （继续，请按空格键）
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction3
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果中心红色箭头为水平方向，
        则判断红色圆圈位于正方块的左侧还是右侧。

        如果为左侧，请按键盘左键
        如果为右侧，请按键盘右键

        （继续，请按空格键）
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction4
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        下面进入正式测试

        （继续，请按空格键）
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine formal1
    TextComponent concentration
      letterHeight = 0.1
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image
      image [set every repeat] = $path
      size = (0.53, 0.5)
      startVal [time (s)] = 2.3
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_formal
      allowedKeys = 'left','right','up','down'
      correctAns = $corresp
      forceEndRoutine = True
      startVal [time (s)] = 2.3
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine thanks
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 测试结束，感谢您的参与
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  Routine instruction3_2
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果中心红色箭头为垂直方向，
        则判断红色圆圈位于正方块的上方还是下方。

        如果为上方，请按键盘上键
        如果为下方，请按键盘下键

        （继续，请按空格键）
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rest
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在是休息阶段

        （继续，请按空格键）
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instruction1
  Routine instruction2
  Routine instruction3
  Routine instruction3_2
  Routine instruction4
  LoopInitiator loop_formal loopType="TrialHandler"
    conditionsFile = documents\formal.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('path', 'image\\ver_dr.png'), ('corresp', 'down')]),
      OrderedDict([('path', 'image\\hor_dl.png'), ('corresp', 'left')]),
      OrderedDict([('path', 'image\\hor_dr.png'), ('corresp', 'right')]),
      OrderedDict([('path', 'image\\ver_dl.png'), ('corresp', 'down')]),
      OrderedDict([('path', 'image\\hor_ul.png'), ('corresp', 'left')]),
      OrderedDict([('path', 'image\\hor_ur.png'), ('corresp', 'right')]),
      OrderedDict([('path', 'image\\ver_ul.png'), ('corresp', 'up')]),
      OrderedDict([('path', 'image\\ver_dr.png'), ('corresp', 'down')]),
      OrderedDict([('path', 'image\\ver_ur.png'), ('corresp', 'up')]),
      OrderedDict([('path', 'image\\hor_dl.png'), ('corresp', 'left')]),
      OrderedDict([('path', 'image\\hor_dr.png'), ('corresp', 'right')]),
      OrderedDict([('path', 'image\\hor_ul.png'), ('corresp', 'left')]),
      OrderedDict([('path', 'image\\hor_ur.png'), ('corresp', 'right')]),
      OrderedDict([('path', 'image\\ver_dl.png'), ('corresp', 'down')]),
      OrderedDict([('path', 'image\\ver_ul.png'), ('corresp', 'up')]),
      OrderedDict([('path', 'image\\ver_ur.png'), ('corresp', 'up')]),
      OrderedDict([('path', 'image\\hor_dl.png'), ('corresp', 'left')]),
      OrderedDict([('path', 'image\\hor_dr.png'), ('corresp', 'right')]),
      OrderedDict([('path', 'image\\hor_ul.png'), ('corresp', 'left')]),
      OrderedDict([('path', 'image\\hor_ur.png'), ('corresp', 'right')]),
      OrderedDict([('path', 'image\\ver_dl.png'), ('corresp', 'down')]),
      OrderedDict([('path', 'image\\ver_dr.png'), ('corresp', 'down')]),
      OrderedDict([('path', 'image\\ver_ul.png'), ('corresp', 'up')])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
    Routine formal1
  LoopTerminator loop_formal
  Routine rest
  LoopInitiator loop_formal2 loopType="TrialHandler"
    conditionsFile = documents\formal.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine formal1
  LoopTerminator loop_formal2
  Routine thanks
