PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', '姓名拼音': '', '男1/女2': '', '入院1/出院2': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Task_Switching_Practice
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Routines
  Routine instruction1
    TextComponent text1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加测试
        （练习部分）

        （继续，请按空格键）
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction2
    TextComponent text2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        首先屏幕会出现一个注视点"+"
        之后会出现一个正方形图片

        （继续，请按空格键）
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 练习结束，请开始正式测试
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  Routine instruction3
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果中心红色箭头为水平方向，
        则判断红色圆圈位于正方块的左侧还是右侧。

        如果为左侧，请按键盘左键
        如果为右侧，请按键盘右键

        （继续，请按空格键）
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction4
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果准备好了，请进入练习部分

        （继续，请按空格键）
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message
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  Routine instruction3_2
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果中心红色箭头为垂直方向，
        则判断红色圆圈位于正方块的上方还是下方。

        如果为上方，请按键盘上键
        如果为下方，请按键盘下键

        （继续，请按空格键）
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_ver
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image_2
      image [set every repeat] = $path2
      size = (0.53, 0.5)
      startVal [time (s)] = 2.3
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_practice2
      allowedKeys = 'up','down','left','right'
      correctAns = $corresp2
      forceEndRoutine = True
      startVal [time (s)] = 2.3
      stopVal [duration (s)] = 3
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        message2=""
      End Routine:
        if key_resp_practice2.corr:
            message2="回答正确"
        else:
            message2="回答错误"
        if not key_resp_practice2.keys:
            message2="请在三秒内按键"
  Routine practice_hor
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 1
      text = +
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    ImageComponent image
      image [set every repeat] = $path1
      size = (0.53, 0.5)
      startVal [time (s)] = 2.3
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_practice
      allowedKeys = 'left','right','up','down'
      correctAns = $corresp1
      forceEndRoutine = True
      startVal [time (s)] = 2.3
      stopVal [duration (s)] = 3
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        time=0
        message=""
      Each Frame:
        if key_resp_practice.corr:
            message="回答正确"
        else:
            message="回答错误"
        if not key_resp_practice.keys:
            message="请在三秒内按键"
  Routine feedback2
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message2
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  Routine practice_mix
    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 1.3
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image_3
      image [set every repeat] = $path
      size = (0.53, 0.5)
      startVal [time (s)] = 2.3
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_practice3
      allowedKeys = 'left','right','up','down'
      correctAns = $corresp
      forceEndRoutine = True
      startVal [time (s)] = 2.3
      stopVal [duration (s)] = 3
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        message3=""
      Each Frame:
        if key_resp_practice3.corr:
            message3="回答正确"
        else:
            message3="回答错误"
        if not key_resp_practice3.keys:
            message3="请在三秒内按键"
  Routine feedback3
    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message3
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  Routine rest1
    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在是休息阶段

        （继续，请按空格键）
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction5
    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果中心红色箭头为水平方向，
        则判断红色圆圈位于正方块的左侧还是右侧。

        如果为左侧，请按键盘左键
        如果为右侧，请按键盘右键

        如果中心红色箭头为垂直方向，
        则判断红色圆圈位于正方块的上方还是下方。

        如果为上方，请按键盘上键
        如果为下方，请按键盘下键

        （继续，请按空格键）
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instruction1
  Routine instruction4
  Routine instruction3
  LoopInitiator loop1 loopType="TrialHandler"
    conditionsFile = documents\practice1.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('path1', 'image\\hor_dl.png'), ('corresp1', 'left'), ('path2', 'image\\ver_dl.png'), ('corresp2', 'down')]),
      OrderedDict([('path1', 'image\\hor_dr.png'), ('corresp1', 'right'), ('path2', 'image\\ver_dr.png'), ('corresp2', 'down')]),
      OrderedDict([('path1', 'image\\hor_ul.png'), ('corresp1', 'left'), ('path2', 'image\\ver_ul.png'), ('corresp2', 'up')]),
      OrderedDict([('path1', 'image\\hor_ur.png'), ('corresp1', 'right'), ('path2', 'image\\ver_ur.png'), ('corresp2', 'up')])]
    Routine practice_hor
    Routine feedback
  LoopTerminator loop1
  Routine rest1
  Routine instruction3_2
  LoopInitiator loop2 loopType="TrialHandler"
    conditionsFile = documents\practice1.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('path1', 'image\\hor_dl.png'), ('corresp1', 'left'), ('path2', 'image\\ver_dl.png'), ('corresp2', 'down')]),
      OrderedDict([('path1', 'image\\hor_dr.png'), ('corresp1', 'right'), ('path2', 'image\\ver_dr.png'), ('corresp2', 'down')]),
      OrderedDict([('path1', 'image\\hor_ul.png'), ('corresp1', 'left'), ('path2', 'image\\ver_ul.png'), ('corresp2', 'up')]),
      OrderedDict([('path1', 'image\\hor_ur.png'), ('corresp1', 'right'), ('path2', 'image\\ver_ur.png'), ('corresp2', 'up')])]
    Routine practice_ver
    Routine feedback2
  LoopTerminator loop2
  Routine rest1
  Routine instruction5
  LoopInitiator loop3 loopType="TrialHandler"
    conditionsFile = documents\practice2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('path', 'image\\hor_dl.png'), ('corresp', 'left')]),
      OrderedDict([('path', 'image\\hor_dr.png'), ('corresp', 'right')]),
      OrderedDict([('path', 'image\\hor_ul.png'), ('corresp', 'left')]),
      OrderedDict([('path', 'image\\hor_ur.png'), ('corresp', 'right')]),
      OrderedDict([('path', 'image\\ver_dl.png'), ('corresp', 'down')]),
      OrderedDict([('path', 'image\\ver_dr.png'), ('corresp', 'down')]),
      OrderedDict([('path', 'image\\ver_ul.png'), ('corresp', 'up')]),
      OrderedDict([('path', 'image\\ver_ur.png'), ('corresp', 'up')])]
    Routine practice_mix
    Routine feedback3
  LoopTerminator loop3
  Routine thanks
