PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', '姓名拼音': '', '男1/女2': '', '入院1/出院2': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Simple_Guessing_Task_Formal
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Routines
  Routine formal1
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 1
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      text:
        买定离手

        猜大，请按右键
        猜小，请按左键
    KeyboardComponent key_resp_formal1
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        mov1=''
        text1=''
        x=100
      End Routine:
        if "left"in key_resp_formal1.keys:
            mov1=path1
            text1=fdb1
            x+=mon
        if "right" in key_resp_formal1.keys:
            mov1=path2
            text1=fdb2
            x+=mon
  Routine feedback1
    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $text1
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    TextComponent text_9
      letterHeight = 0.05
      pos = (-0.1, 0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = 您现在拥有的金币为：
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    TextComponent text_10
      color = blue
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $x
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  Routine instruction2
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        本次是一个娱乐游戏

        开始时,屏幕中间会出现注视点“+”
        之后让您选择猜一个骰子点数大小

        （继续，请按空格键）
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction1
    TextComponent introduction_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加测试

        （继续，请按空格键）
    KeyboardComponent introduction2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction3
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        骰子1、2、3点为小点
        骰子4、5、6点为大点

        如果猜大，请按键盘右键
        如果猜小，请按键盘左键

        （继续，请按空格键）
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction4
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在，我们开始游戏

        （继续，请按空格键）
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine formal2
  Routine feedback2
  Routine thanks
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 测试结束，感谢您的参与
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  Routine initiate
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        您的初始金币为
        100
  Routine end
    TextComponent text_11
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 游戏结束
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    TextComponent text_12
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 您最后所得金币为:
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    TextComponent text_13
      letterHeight = 0.05
      pos = (0.1, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $x
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  Routine instruction3_2
    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        如果您猜正确，会获得10金币
        如果您猜错了，会扣掉10金币

        游戏开始时，您拥有100金币

        （继续，请按空格键）
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine question1
    TextComponent text_15
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        请对你现在的心情做出评价

        1代表非常不高兴  9代表非常高兴
    RatingScaleComponent rating
      forceEndRoutine = True
      high = 9
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine movie
    MovieComponent movie_2
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $mov1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine rest
    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 继续游戏，请按空格键
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instruction1
  Routine instruction2
  Routine instruction3
  Routine instruction3_2
  Routine instruction4
  Routine initiate
  LoopInitiator loop_formal1 loopType="TrialHandler"
    conditionsFile = documents\loop1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('path1', 'image\\1.mp4'), ('fdb1', '恭喜你，猜对了！'), ('path2', 'image\\4.mp4'), ('fdb2', '恭喜你，猜对了！'), ('mon', 10)]),
      OrderedDict([('path1', 'image\\4.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\2.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)]),
      OrderedDict([('path1', 'image\\3.mp4'), ('fdb1', '恭喜你，猜对了！'), ('path2', 'image\\6.mp4'), ('fdb2', '恭喜你，猜对了！'), ('mon', 10)]),
      OrderedDict([('path1', 'image\\2.mp4'), ('fdb1', '恭喜你，猜对了！'), ('path2', 'image\\5.mp4'), ('fdb2', '恭喜你，猜对了！'), ('mon', 10)]),
      OrderedDict([('path1', 'image\\5.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\1.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)]),
      OrderedDict([('path1', 'image\\3.mp4'), ('fdb1', '恭喜你，猜对了！'), ('path2', 'image\\6.mp4'), ('fdb2', '恭喜你，猜对了！'), ('mon', 10)]),
      OrderedDict([('path1', 'image\\3.mp4'), ('fdb1', '恭喜你，猜对了！'), ('path2', 'image\\6.mp4'), ('fdb2', '恭喜你，猜对了！'), ('mon', 10)]),
      OrderedDict([('path1', 'image\\2.mp4'), ('fdb1', '恭喜你，猜对了！'), ('path2', 'image\\5.mp4'), ('fdb2', '恭喜你，猜对了！'), ('mon', 10)]),
      OrderedDict([('path1', 'image\\1.mp4'), ('fdb1', '恭喜你，猜对了！'), ('path2', 'image\\4.mp4'), ('fdb2', '恭喜你，猜对了！'), ('mon', 10)]),
      OrderedDict([('path1', 'image\\3.mp4'), ('fdb1', '恭喜你，猜对了！'), ('path2', 'image\\6.mp4'), ('fdb2', '恭喜你，猜对了！'), ('mon', 10)]),
      OrderedDict([('path1', 'image\\2.mp4'), ('fdb1', '恭喜你，猜对了！'), ('path2', 'image\\5.mp4'), ('fdb2', '恭喜你，猜对了！'), ('mon', 10)]),
      OrderedDict([('path1', 'image\\1.mp4'), ('fdb1', '恭喜你，猜对了！'), ('path2', 'image\\4.mp4'), ('fdb2', '恭喜你，猜对了！'), ('mon', 10)])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
    Routine formal1
    Routine movie
    Routine feedback1
  LoopTerminator loop_formal1
  Routine question1
  Routine rest
  LoopInitiator loop_formal2 loopType="TrialHandler"
    conditionsFile = documents\loop2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('path1', 'image\\4.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\1.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)]),
      OrderedDict([('path1', 'image\\6.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\3.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)]),
      OrderedDict([('path1', 'image\\1.mp4'), ('fdb1', '恭喜你，猜对了！'), ('path2', 'image\\4.mp4'), ('fdb2', '恭喜你，猜对了！'), ('mon', 10)]),
      OrderedDict([('path1', 'image\\5.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\2.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)]),
      OrderedDict([('path1', 'image\\6.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\3.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)]),
      OrderedDict([('path1', 'image\\4.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\1.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)]),
      OrderedDict([('path1', 'image\\5.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\2.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)]),
      OrderedDict([('path1', 'image\\5.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\2.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)]),
      OrderedDict([('path1', 'image\\2.mp4'), ('fdb1', '恭喜你，猜对了！'), ('path2', 'image\\5.mp4'), ('fdb2', '恭喜你，猜对了！'), ('mon', 10)]),
      OrderedDict([('path1', 'image\\6.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\3.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)]),
      OrderedDict([('path1', 'image\\5.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\2.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)])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
    Routine formal1
    Routine movie
    Routine feedback1
  LoopTerminator loop_formal2
  Routine question1
  Routine rest
  LoopInitiator loop_formal3 loopType="TrialHandler"
    conditionsFile = documents\loop2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('path1', 'image\\4.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\1.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)]),
      OrderedDict([('path1', 'image\\6.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\3.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)]),
      OrderedDict([('path1', 'image\\1.mp4'), ('fdb1', '恭喜你，猜对了！'), ('path2', 'image\\4.mp4'), ('fdb2', '恭喜你，猜对了！'), ('mon', 10)]),
      OrderedDict([('path1', 'image\\5.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\2.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)]),
      OrderedDict([('path1', 'image\\6.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\3.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)]),
      OrderedDict([('path1', 'image\\4.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\1.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)]),
      OrderedDict([('path1', 'image\\5.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\2.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)]),
      OrderedDict([('path1', 'image\\5.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\2.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)]),
      OrderedDict([('path1', 'image\\2.mp4'), ('fdb1', '恭喜你，猜对了！'), ('path2', 'image\\5.mp4'), ('fdb2', '恭喜你，猜对了！'), ('mon', 10)]),
      OrderedDict([('path1', 'image\\6.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\3.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)]),
      OrderedDict([('path1', 'image\\5.mp4'), ('fdb1', '很遗憾，你猜错了。'), ('path2', 'image\\2.mp4'), ('fdb2', '很遗憾，你猜错了。'), ('mon', -10)])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
    Routine formal1
    Routine movie
    Routine feedback1
  LoopTerminator loop_formal3
  Routine question1
  Routine rest
  LoopInitiator loop_formal4 loopType="TrialHandler"
    conditionsFile = documents\loop1.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine formal1
    Routine movie
    Routine feedback1
  LoopTerminator loop_formal4
  Routine end
  Routine question1
  Routine thanks
